def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;

  def comp parameters as
    var E_A_thoracic_aorta_C: J_per_m3 {init: 400000, interface: public};
    var l_A_thoracic_aorta_C: metre {init: 0.16, interface: public};
    var r_0_A_thoracic_aorta_C: metre {init: 0.00904, interface: public};
    var u_0_A_thoracic_aorta_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_thoracic_aorta_C: J_per_m3 {init: 0, interface: public};
    var theta_A_thoracic_aorta_C: dimensionless {init: 0, interface: public};
    var E_A_aortic_arch_C_1: J_per_m3 {init: 124951.14221, interface: public};
    var l_A_aortic_arch_C_1: metre {init: 0.0745, interface: public};
    var r_0_A_aortic_arch_C_1: metre {init: 0.0145, interface: public};
    var u_0_A_aortic_arch_C_1: J_per_m3 {init: 0, interface: public};
    var theta_A_aortic_arch_C_1: dimensionless {init: 0, interface: public};
    var u_ext_A_aortic_arch_C_1: J_per_m3 {init: 0, interface: public};
    var E_A_aortic_arch_C_2: J_per_m3 {init: 400000, interface: public};
    var l_A_aortic_arch_C_2: metre {init: 0.00961, interface: public};
    var r_0_A_aortic_arch_C_2: metre {init: 0.0128, interface: public};
    var u_0_A_aortic_arch_C_2: J_per_m3 {init: 0, interface: public};
    var theta_A_aortic_arch_C_2: dimensionless {init: 0, interface: public};
    var u_ext_A_aortic_arch_C_2: J_per_m3 {init: 0, interface: public};
    var E_A_aortic_arch_C_3: J_per_m3 {init: 400000, interface: public};
    var l_A_aortic_arch_C_3: metre {init: 0.00698, interface: public};
    var r_0_A_aortic_arch_C_3: metre {init: 0.0124, interface: public};
    var u_0_A_aortic_arch_C_3: J_per_m3 {init: 0, interface: public};
    var theta_A_aortic_arch_C_3: dimensionless {init: 0, interface: public};
    var u_ext_A_aortic_arch_C_3: J_per_m3 {init: 0, interface: public};
    var E_A_aortic_arch_C_4: J_per_m3 {init: 400000, interface: public};
    var l_A_aortic_arch_C_4: metre {init: 0.0432, interface: public};
    var r_0_A_aortic_arch_C_4: metre {init: 0.0114, interface: public};
    var u_0_A_aortic_arch_C_4: J_per_m3 {init: 0, interface: public};
    var u_ext_A_aortic_arch_C_4: J_per_m3 {init: 0, interface: public};
    var theta_A_aortic_arch_C_4: dimensionless {init: 0, interface: public};
    var E_A_abdominal_aorta_C_1: J_per_m3 {init: 400000, interface: public};
    var l_A_abdominal_aorta_C_1: metre {init: 0.00325, interface: public};
    var r_0_A_abdominal_aorta_C_1: metre {init: 0.00752, interface: public};
    var u_0_A_abdominal_aorta_C_1: J_per_m3 {init: 0, interface: public};
    var theta_A_abdominal_aorta_C_1: dimensionless {init: 0, interface: public};
    var u_ext_A_abdominal_aorta_C_1: J_per_m3 {init: 0, interface: public};
    var E_A_abdominal_aorta_C_2: J_per_m3 {init: 400000, interface: public};
    var l_A_abdominal_aorta_C_2: metre {init: 0.014, interface: public};
    var r_0_A_abdominal_aorta_C_2: metre {init: 0.00741, interface: public};
    var u_0_A_abdominal_aorta_C_2: J_per_m3 {init: 0, interface: public};
    var theta_A_abdominal_aorta_C_2: dimensionless {init: 0, interface: public};
    var u_ext_A_abdominal_aorta_C_2: J_per_m3 {init: 0, interface: public};
    var E_A_abdominal_aorta_C_3: J_per_m3 {init: 400000, interface: public};
    var l_A_abdominal_aorta_C_3: metre {init: 0.00432, interface: public};
    var r_0_A_abdominal_aorta_C_3: metre {init: 0.00729, interface: public};
    var u_0_A_abdominal_aorta_C_3: J_per_m3 {init: 0, interface: public};
    var theta_A_abdominal_aorta_C_3: dimensionless {init: 0, interface: public};
    var u_ext_A_abdominal_aorta_C_3: J_per_m3 {init: 0, interface: public};
    var E_A_abdominal_aorta_C_4: J_per_m3 {init: 400000, interface: public};
    var l_A_abdominal_aorta_C_4: metre {init: 0.012, interface: public};
    var r_0_A_abdominal_aorta_C_4: metre {init: 0.00719, interface: public};
    var u_0_A_abdominal_aorta_C_4: J_per_m3 {init: 0, interface: public};
    var theta_A_abdominal_aorta_C_4: dimensionless {init: 0, interface: public};
    var u_ext_A_abdominal_aorta_C_4: J_per_m3 {init: 0, interface: public};
    var E_A_abdominal_aorta_C_5: J_per_m3 {init: 400000, interface: public};
    var l_A_abdominal_aorta_C_5: metre {init: 0.0541, interface: public};
    var r_0_A_abdominal_aorta_C_5: metre {init: 0.00677, interface: public};
    var u_0_A_abdominal_aorta_C_5: J_per_m3 {init: 0, interface: public};
    var theta_A_abdominal_aorta_C_5: dimensionless {init: 0, interface: public};
    var u_ext_A_abdominal_aorta_C_5: J_per_m3 {init: 0, interface: public};
    var E_A_abdominal_aorta_C_6: J_per_m3 {init: 400000, interface: public};
    var l_A_abdominal_aorta_C_6: metre {init: 0.0422, interface: public};
    var r_0_A_abdominal_aorta_C_6: metre {init: 0.00617, interface: public};
    var u_0_A_abdominal_aorta_C_6: J_per_m3 {init: 0, interface: public};
    var theta_A_abdominal_aorta_C_6: dimensionless {init: 0, interface: public};
    var u_ext_A_abdominal_aorta_C_6: J_per_m3 {init: 0, interface: public};
    var E_A_brachiocephalic_trunk_C: J_per_m3 {init: 400000, interface: public};
    var l_A_brachiocephalic_trunk_C: metre {init: 0.0474, interface: public};
    var r_0_A_brachiocephalic_trunk_C: metre {init: 0.00644, interface: public};
    var u_0_A_brachiocephalic_trunk_C: J_per_m3 {init: 0, interface: public};
    var theta_A_brachiocephalic_trunk_C: dimensionless {init: 0, interface: public};
    var u_ext_A_brachiocephalic_trunk_C: J_per_m3 {init: 0, interface: public};
    var E_A_common_carotida_L: J_per_m3 {init: 400000, interface: public};
    var l_A_common_carotida_L: metre {init: 0.121, interface: public};
    var r_0_A_common_carotida_L: metre {init: 0.0039, interface: public};
    var u_0_A_common_carotida_L: J_per_m3 {init: 0, interface: public};
    var theta_A_common_carotida_L: dimensionless {init: 0, interface: public};
    var u_ext_A_common_carotida_L: J_per_m3 {init: 0, interface: public};
    var E_A_subclavian_L_1: J_per_m3 {init: 400000, interface: public};
    var l_A_subclavian_L_1: metre {init: 0.0495, interface: public};
    var r_0_A_subclavian_L_1: metre {init: 0.00419, interface: public};
    var u_0_A_subclavian_L_1: J_per_m3 {init: 0, interface: public};
    var theta_A_subclavian_L_1: dimensionless {init: 0, interface: public};
    var u_ext_A_subclavian_L_1: J_per_m3 {init: 0, interface: public};
    var E_A_celiac_trunk_C_1: J_per_m3 {init: 400000, interface: public};
    var l_A_celiac_trunk_C_1: metre {init: 0.00847, interface: public};
    var r_0_A_celiac_trunk_C_1: metre {init: 0.00328, interface: public};
    var u_0_A_celiac_trunk_C_1: J_per_m3 {init: 0, interface: public};
    var theta_A_celiac_trunk_C_1: dimensionless {init: 0, interface: public};
    var u_ext_A_celiac_trunk_C_1: J_per_m3 {init: 0, interface: public};
    var E_A_celiac_trunk_C_2: J_per_m3 {init: 400000, interface: public};
    var l_A_celiac_trunk_C_2: metre {init: 0.00847, interface: public};
    var r_0_A_celiac_trunk_C_2: metre {init: 0.00328, interface: public};
    var u_0_A_celiac_trunk_C_2: J_per_m3 {init: 0, interface: public};
    var theta_A_celiac_trunk_C_2: dimensionless {init: 0, interface: public};
    var u_ext_A_celiac_trunk_C_2: J_per_m3 {init: 0, interface: public};
    var E_A_left_gastric_C: J_per_m3 {init: 400000, interface: public};
    var l_A_left_gastric_C: metre {init: 0.0948, interface: public};
    var r_0_A_left_gastric_C: metre {init: 0.00151, interface: public};
    var u_0_A_left_gastric_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_left_gastric_C: J_per_m3 {init: 0, interface: public};
    var theta_A_left_gastric_C: dimensionless {init: 0, interface: public};
    var E_A_common_hepatic_C: J_per_m3 {init: 400000, interface: public};
    var l_A_common_hepatic_C: metre {init: 0.0693, interface: public};
    var r_0_A_common_hepatic_C: metre {init: 0.00268614, interface: public};
    var u_0_A_common_hepatic_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_common_hepatic_C: J_per_m3 {init: 0, interface: public};
    var theta_A_common_hepatic_C: dimensionless {init: 0, interface: public};
    var E_A_splenic_C: J_per_m3 {init: 400000, interface: public};
    var l_A_splenic_C: metre {init: 0.07, interface: public};
    var r_0_A_splenic_C: metre {init: 0.00205, interface: public};
    var u_0_A_splenic_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_splenic_C: J_per_m3 {init: 0, interface: public};
    var theta_A_splenic_C: dimensionless {init: 0, interface: public};
    var E_A_superior_mesenteric_C: J_per_m3 {init: 400000, interface: public};
    var l_A_superior_mesenteric_C: metre {init: 0.217, interface: public};
    var r_0_A_superior_mesenteric_C: metre {init: 0.003, interface: public};
    var u_0_A_superior_mesenteric_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_superior_mesenteric_C: J_per_m3 {init: 0, interface: public};
    var theta_A_superior_mesenteric_C: dimensionless {init: 0, interface: public};
    var E_A_renal_L: J_per_m3 {init: 400000, interface: public};
    var l_A_renal_L: metre {init: 0.022, interface: public};
    var r_0_A_renal_L: metre {init: 0.0027089, interface: public};
    var u_0_A_renal_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_renal_L: J_per_m3 {init: 0, interface: public};
    var theta_A_renal_L: dimensionless {init: 0, interface: public};
    var E_A_renal_R: J_per_m3 {init: 400000, interface: public};
    var l_A_renal_R: metre {init: 0.0377, interface: public};
    var r_0_A_renal_R: metre {init: 0.00293, interface: public};
    var u_0_A_renal_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_renal_R: J_per_m3 {init: 0, interface: public};
    var theta_A_renal_R: dimensionless {init: 0, interface: public};
    var E_A_inferior_mesenteric_C: J_per_m3 {init: 400000, interface: public};
    var l_A_inferior_mesenteric_C: metre {init: 0.0903, interface: public};
    var r_0_A_inferior_mesenteric_C: metre {init: 0.00195, interface: public};
    var u_0_A_inferior_mesenteric_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_inferior_mesenteric_C: J_per_m3 {init: 0, interface: public};
    var theta_A_inferior_mesenteric_C: dimensionless {init: 0, interface: public};
    var E_A_common_iliac_L: J_per_m3 {init: 400000, interface: public};
    var l_A_common_iliac_L: metre {init: 0.0741, interface: public};
    var r_0_A_common_iliac_L: metre {init: 0.00429, interface: public};
    var u_0_A_common_iliac_L: J_per_m3 {init: 0, interface: public};
    var theta_A_common_iliac_L: dimensionless {init: 0, interface: public};
    var u_ext_A_common_iliac_L: J_per_m3 {init: -4000, interface: public};
    var E_A_common_iliac_R: J_per_m3 {init: 400000, interface: public};
    var l_A_common_iliac_R: metre {init: 0.0764, interface: public};
    var r_0_A_common_iliac_R: metre {init: 0.00429, interface: public};
    var u_0_A_common_iliac_R: J_per_m3 {init: 0, interface: public};
    var theta_A_common_iliac_R: dimensionless {init: 0, interface: public};
    var u_ext_A_common_iliac_R: J_per_m3 {init: -4000, interface: public};
    var E_A_subclavian_R_1: J_per_m3 {init: 400000, interface: public};
    var l_A_subclavian_R_1: metre {init: 0.0157, interface: public};
    var r_0_A_subclavian_R_1: metre {init: 0.00454, interface: public};
    var u_0_A_subclavian_R_1: J_per_m3 {init: 0, interface: public};
    var theta_A_subclavian_R_1: dimensionless {init: 0, interface: public};
    var u_ext_A_subclavian_R_1: J_per_m3 {init: 0, interface: public};
    var E_A_common_carotida_R: J_per_m3 {init: 400000, interface: public};
    var l_A_common_carotida_R: metre {init: 0.0813, interface: public};
    var r_0_A_common_carotida_R: metre {init: 0.0039, interface: public};
    var u_0_A_common_carotida_R: J_per_m3 {init: 0, interface: public};
    var theta_A_common_carotida_R: dimensionless {init: 0, interface: public};
    var u_ext_A_common_carotida_R: J_per_m3 {init: 0, interface: public};
    var E_A_subclavian_L_2: J_per_m3 {init: 400000, interface: public};
    var l_A_subclavian_L_2: metre {init: 0.0411, interface: public};
    var r_0_A_subclavian_L_2: metre {init: 0.00289, interface: public};
    var u_0_A_subclavian_L_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_subclavian_L_2: J_per_m3 {init: 0, interface: public};
    var theta_A_subclavian_L_2: dimensionless {init: 0, interface: public};
    var E_A_vertebral_L_1: J_per_m3 {init: 400000, interface: public};
    var l_A_vertebral_L_1: metre {init: 0.203, interface: public};
    var r_0_A_vertebral_L_1: metre {init: 0.00134, interface: public};
    var u_0_A_vertebral_L_1: J_per_m3 {init: 0, interface: public};
    var theta_A_vertebral_L_1: dimensionless {init: 0, interface: public};
    var u_ext_A_vertebral_L_1: J_per_m3 {init: 0, interface: public};
    var E_A_external_iliac_L: J_per_m3 {init: 400000, interface: public};
    var l_A_external_iliac_L: metre {init: 0.102, interface: public};
    var r_0_A_external_iliac_L: metre {init: 0.00328, interface: public};
    var u_0_A_external_iliac_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_external_iliac_L: J_per_m3 {init: -4000, interface: public};
    var theta_A_external_iliac_L: dimensionless {init: 0, interface: public};
    var E_A_internal_iliac_L: J_per_m3 {init: 400000, interface: public};
    var l_A_internal_iliac_L: metre {init: 0.0725, interface: public};
    var r_0_A_internal_iliac_L: metre {init: 0.00226, interface: public};
    var u_0_A_internal_iliac_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_internal_iliac_L: J_per_m3 {init: -4000, interface: public};
    var theta_A_internal_iliac_L: dimensionless {init: 0, interface: public};
    var E_A_external_iliac_R: J_per_m3 {init: 400000, interface: public};
    var l_A_external_iliac_R: metre {init: 0.102, interface: public};
    var r_0_A_external_iliac_R: metre {init: 0.00328, interface: public};
    var u_0_A_external_iliac_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_external_iliac_R: J_per_m3 {init: -4000, interface: public};
    var theta_A_external_iliac_R: dimensionless {init: 0, interface: public};
    var E_A_internal_iliac_R: J_per_m3 {init: 400000, interface: public};
    var l_A_internal_iliac_R: metre {init: 0.0725, interface: public};
    var r_0_A_internal_iliac_R: metre {init: 0.00226, interface: public};
    var u_0_A_internal_iliac_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_internal_iliac_R: J_per_m3 {init: -4000, interface: public};
    var theta_A_internal_iliac_R: dimensionless {init: 0, interface: public};
    var E_A_subclavian_R_2: J_per_m3 {init: 400000, interface: public};
    var l_A_subclavian_R_2: metre {init: 0.0411, interface: public};
    var r_0_A_subclavian_R_2: metre {init: 0.00324, interface: public};
    var u_0_A_subclavian_R_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_subclavian_R_2: J_per_m3 {init: 0, interface: public};
    var theta_A_subclavian_R_2: dimensionless {init: 0, interface: public};
    var E_A_vertebral_R_1: J_per_m3 {init: 400000, interface: public};
    var l_A_vertebral_R_1: metre {init: 0.202, interface: public};
    var r_0_A_vertebral_R_1: metre {init: 0.00134, interface: public};
    var u_0_A_vertebral_R_1: J_per_m3 {init: 0, interface: public};
    var theta_A_vertebral_R_1: dimensionless {init: 0, interface: public};
    var u_ext_A_vertebral_R_1: J_per_m3 {init: 0, interface: public};
    var E_A_femoral_L_1: J_per_m3 {init: 400000, interface: public};
    var l_A_femoral_L_1: metre {init: 0.0316, interface: public};
    var r_0_A_femoral_L_1: metre {init: 0.00317, interface: public};
    var u_0_A_femoral_L_1: J_per_m3 {init: 0, interface: public};
    var theta_A_femoral_L_1: dimensionless {init: 0, interface: public};
    var u_ext_A_femoral_L_1: J_per_m3 {init: -4000, interface: public};
    var E_A_femoral_R_1: J_per_m3 {init: 400000, interface: public};
    var l_A_femoral_R_1: metre {init: 0.0316, interface: public};
    var r_0_A_femoral_R_1: metre {init: 0.00317, interface: public};
    var u_0_A_femoral_R_1: J_per_m3 {init: 0, interface: public};
    var theta_A_femoral_R_1: dimensionless {init: 0, interface: public};
    var u_ext_A_femoral_R_1: J_per_m3 {init: -4000, interface: public};
    var E_A_axillary_L: J_per_m3 {init: 400000, interface: public};
    var l_A_axillary_L: metre {init: 0.12, interface: public};
    var r_0_A_axillary_L: metre {init: 0.00219, interface: public};
    var u_0_A_axillary_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_axillary_L: J_per_m3 {init: 0, interface: public};
    var theta_A_axillary_L: dimensionless {init: 0, interface: public};
    var E_A_axillary_R: J_per_m3 {init: 400000, interface: public};
    var l_A_axillary_R: metre {init: 0.12, interface: public};
    var r_0_A_axillary_R: metre {init: 0.00219, interface: public};
    var u_0_A_axillary_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_axillary_R: J_per_m3 {init: 0, interface: public};
    var theta_A_axillary_R: dimensionless {init: 0, interface: public};
    var E_A_brachial_L: J_per_m3 {init: 400000, interface: public};
    var l_A_brachial_L: metre {init: 0.223, interface: public};
    var r_0_A_brachial_L: metre {init: 0.00195, interface: public};
    var u_0_A_brachial_L: J_per_m3 {init: 0, interface: public};
    var theta_A_brachial_L: dimensionless {init: 0, interface: public};
    var u_ext_A_brachial_L: J_per_m3 {init: 0, interface: public};
    var E_A_brachial_R: J_per_m3 {init: 400000, interface: public};
    var l_A_brachial_R: metre {init: 0.223, interface: public};
    var r_0_A_brachial_R: metre {init: 0.00195, interface: public};
    var u_0_A_brachial_R: J_per_m3 {init: 0, interface: public};
    var theta_A_brachial_R: dimensionless {init: 0, interface: public};
    var u_ext_A_brachial_R: J_per_m3 {init: 0, interface: public};
    var E_A_radial_L: J_per_m3 {init: 400000, interface: public};
    var l_A_radial_L: metre {init: 0.302, interface: public};
    var r_0_A_radial_L: metre {init: 0.00127, interface: public};
    var u_0_A_radial_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_radial_L: J_per_m3 {init: 0, interface: public};
    var theta_A_radial_L: dimensionless {init: 0, interface: public};
    var E_A_ulnar_L: J_per_m3 {init: 400000, interface: public};
    var l_A_ulnar_L: metre {init: 0.269, interface: public};
    var r_0_A_ulnar_L: metre {init: 0.00125, interface: public};
    var u_0_A_ulnar_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_ulnar_L: J_per_m3 {init: 0, interface: public};
    var theta_A_ulnar_L: dimensionless {init: 0, interface: public};
    var E_A_radial_R: J_per_m3 {init: 400000, interface: public};
    var l_A_radial_R: metre {init: 0.302, interface: public};
    var r_0_A_radial_R: metre {init: 0.00127, interface: public};
    var u_0_A_radial_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_radial_R: J_per_m3 {init: 0, interface: public};
    var theta_A_radial_R: dimensionless {init: 0, interface: public};
    var E_A_ulnar_R: J_per_m3 {init: 400000, interface: public};
    var l_A_ulnar_R: metre {init: 0.269, interface: public};
    var r_0_A_ulnar_R: metre {init: 0.00125, interface: public};
    var u_0_A_ulnar_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_ulnar_R: J_per_m3 {init: 0, interface: public};
    var theta_A_ulnar_R: dimensionless {init: 0, interface: public};
    var E_A_profunda_femoris_L: J_per_m3 {init: 400000, interface: public};
    var l_A_profunda_femoris_L: metre {init: 0.238, interface: public};
    var r_0_A_profunda_femoris_L: metre {init: 0.0012, interface: public};
    var u_0_A_profunda_femoris_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_profunda_femoris_L: J_per_m3 {init: -4000, interface: public};
    var theta_A_profunda_femoris_L: dimensionless {init: 0, interface: public};
    var E_A_femoral_L_2: J_per_m3 {init: 400000, interface: public};
    var l_A_femoral_L_2: metre {init: 0.319, interface: public};
    var r_0_A_femoral_L_2: metre {init: 0.00291, interface: public};
    var u_0_A_femoral_L_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_femoral_L_2: J_per_m3 {init: -4000, interface: public};
    var theta_A_femoral_L_2: dimensionless {init: 0, interface: public};
    var E_A_femoral_R_2: J_per_m3 {init: 400000, interface: public};
    var l_A_femoral_R_2: metre {init: 0.319, interface: public};
    var r_0_A_femoral_R_2: metre {init: 0.00291, interface: public};
    var u_0_A_femoral_R_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_femoral_R_2: J_per_m3 {init: -4000, interface: public};
    var theta_A_femoral_R_2: dimensionless {init: 0, interface: public};
    var E_A_profunda_femoris_R: J_per_m3 {init: 400000, interface: public};
    var l_A_profunda_femoris_R: metre {init: 0.238, interface: public};
    var r_0_A_profunda_femoris_R: metre {init: 0.0012, interface: public};
    var u_0_A_profunda_femoris_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_profunda_femoris_R: J_per_m3 {init: -4000, interface: public};
    var theta_A_profunda_femoris_R: dimensionless {init: 0, interface: public};
    var E_A_popliteal_L_1: J_per_m3 {init: 400000, interface: public};
    var l_A_popliteal_L_1: metre {init: 0.132, interface: public};
    var r_0_A_popliteal_L_1: metre {init: 0.00253, interface: public};
    var u_0_A_popliteal_L_1: J_per_m3 {init: 0, interface: public};
    var theta_A_popliteal_L_1: dimensionless {init: 0, interface: public};
    var u_ext_A_popliteal_L_1: J_per_m3 {init: -4000, interface: public};
    var E_A_popliteal_R_1: J_per_m3 {init: 400000, interface: public};
    var l_A_popliteal_R_1: metre {init: 0.132, interface: public};
    var r_0_A_popliteal_R_1: metre {init: 0.00253, interface: public};
    var u_0_A_popliteal_R_1: J_per_m3 {init: 0, interface: public};
    var theta_A_popliteal_R_1: dimensionless {init: 0, interface: public};
    var u_ext_A_popliteal_R_1: J_per_m3 {init: -4000, interface: public};
    var E_A_popliteal_L_2: J_per_m3 {init: 400000, interface: public};
    var l_A_popliteal_L_2: metre {init: 0.0088, interface: public};
    var r_0_A_popliteal_L_2: metre {init: 0.00236, interface: public};
    var u_0_A_popliteal_L_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_popliteal_L_2: J_per_m3 {init: -4000, interface: public};
    var theta_A_popliteal_L_2: dimensionless {init: 0, interface: public};
    var E_A_anterior_tibial_L: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_tibial_L: metre {init: 0.386, interface: public};
    var r_0_A_anterior_tibial_L: metre {init: 0.00117, interface: public};
    var u_0_A_anterior_tibial_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_tibial_L: J_per_m3 {init: -4000, interface: public};
    var theta_A_anterior_tibial_L: dimensionless {init: 0, interface: public};
    var E_A_popliteal_R_2: J_per_m3 {init: 400000, interface: public};
    var l_A_popliteal_R_2: metre {init: 0.0088, interface: public};
    var r_0_A_popliteal_R_2: metre {init: 0.00236, interface: public};
    var u_0_A_popliteal_R_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_popliteal_R_2: J_per_m3 {init: -4000, interface: public};
    var theta_A_popliteal_R_2: dimensionless {init: 0, interface: public};
    var E_A_anterior_tibial_R: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_tibial_R: metre {init: 0.386, interface: public};
    var r_0_A_anterior_tibial_R: metre {init: 0.00117, interface: public};
    var u_0_A_anterior_tibial_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_tibial_R: J_per_m3 {init: -4000, interface: public};
    var theta_A_anterior_tibial_R: dimensionless {init: 0, interface: public};
    var E_A_tibiofibular_trunk_L: J_per_m3 {init: 400000, interface: public};
    var l_A_tibiofibular_trunk_L: metre {init: 0.0362, interface: public};
    var r_0_A_tibiofibular_trunk_L: metre {init: 0.00203, interface: public};
    var u_0_A_tibiofibular_trunk_L: J_per_m3 {init: 0, interface: public};
    var theta_A_tibiofibular_trunk_L: dimensionless {init: 0, interface: public};
    var u_ext_A_tibiofibular_trunk_L: J_per_m3 {init: -4000, interface: public};
    var E_A_tibiofibular_trunk_R: J_per_m3 {init: 400000, interface: public};
    var l_A_tibiofibular_trunk_R: metre {init: 0.0362, interface: public};
    var r_0_A_tibiofibular_trunk_R: metre {init: 0.00203, interface: public};
    var u_0_A_tibiofibular_trunk_R: J_per_m3 {init: 0, interface: public};
    var theta_A_tibiofibular_trunk_R: dimensionless {init: 0, interface: public};
    var u_ext_A_tibiofibular_trunk_R: J_per_m3 {init: -4000, interface: public};
    var E_A_posterior_tibial_L: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_tibial_L: metre {init: 0.383, interface: public};
    var r_0_A_posterior_tibial_L: metre {init: 0.00109, interface: public};
    var u_0_A_posterior_tibial_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_tibial_L: J_per_m3 {init: -4000, interface: public};
    var theta_A_posterior_tibial_L: dimensionless {init: 0, interface: public};
    var E_A_fibular_L: J_per_m3 {init: 400000, interface: public};
    var l_A_fibular_L: metre {init: 0.381, interface: public};
    var r_0_A_fibular_L: metre {init: 0.000831, interface: public};
    var u_0_A_fibular_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_fibular_L: J_per_m3 {init: -4000, interface: public};
    var theta_A_fibular_L: dimensionless {init: 0, interface: public};
    var E_A_fibular_R: J_per_m3 {init: 400000, interface: public};
    var l_A_fibular_R: metre {init: 0.381, interface: public};
    var r_0_A_fibular_R: metre {init: 0.000831, interface: public};
    var u_0_A_fibular_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_fibular_R: J_per_m3 {init: -4000, interface: public};
    var theta_A_fibular_R: dimensionless {init: 0, interface: public};
    var E_A_posterior_tibial_R: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_tibial_R: metre {init: 0.383, interface: public};
    var r_0_A_posterior_tibial_R: metre {init: 0.00109, interface: public};
    var u_0_A_posterior_tibial_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_tibial_R: J_per_m3 {init: -4000, interface: public};
    var theta_A_posterior_tibial_R: dimensionless {init: 0, interface: public};
    var E_A_external_carotid_L: J_per_m3 {init: 400000, interface: public};
    var l_A_external_carotid_L: metre {init: 0.061, interface: public};
    var r_0_A_external_carotid_L: metre {init: 0.00192, interface: public};
    var u_0_A_external_carotid_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_external_carotid_L: J_per_m3 {init: 0, interface: public};
    var theta_A_external_carotid_L: dimensionless {init: 0, interface: public};
    var E_A_external_carotid_R: J_per_m3 {init: 400000, interface: public};
    var l_A_external_carotid_R: metre {init: 0.061, interface: public};
    var r_0_A_external_carotid_R: metre {init: 0.00192, interface: public};
    var u_0_A_external_carotid_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_external_carotid_R: J_per_m3 {init: 0, interface: public};
    var theta_A_external_carotid_R: dimensionless {init: 0, interface: public};
    var E_A_vertebral_R_2: J_per_m3 {init: 400000, interface: public};
    var l_A_vertebral_R_2: metre {init: 0.00903, interface: public};
    var r_0_A_vertebral_R_2: metre {init: 0.00134, interface: public};
    var u_0_A_vertebral_R_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_vertebral_R_2: J_per_m3 {init: 0, interface: public};
    var theta_A_vertebral_R_2: dimensionless {init: 0, interface: public};
    var E_A_posterior_inferior_cerebellar_R: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_inferior_cerebellar_R: metre {init: 0.0356, interface: public};
    var r_0_A_posterior_inferior_cerebellar_R: metre {init: 0.000433, interface: public};
    var u_0_A_posterior_inferior_cerebellar_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_inferior_cerebellar_R: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_inferior_cerebellar_R: dimensionless {init: 0, interface: public};
    var E_A_posterior_inferior_cerebellar_L: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_inferior_cerebellar_L: metre {init: 0.0356, interface: public};
    var r_0_A_posterior_inferior_cerebellar_L: metre {init: 0.000433, interface: public};
    var u_0_A_posterior_inferior_cerebellar_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_inferior_cerebellar_L: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_inferior_cerebellar_L: dimensionless {init: 0, interface: public};
    var E_A_vertebral_L_2: J_per_m3 {init: 400000, interface: public};
    var l_A_vertebral_L_2: metre {init: 0.00827, interface: public};
    var r_0_A_vertebral_L_2: metre {init: 0.00134, interface: public};
    var u_0_A_vertebral_L_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_vertebral_L_2: J_per_m3 {init: 0, interface: public};
    var theta_A_vertebral_L_2: dimensionless {init: 0, interface: public};
    var E_A_basilar_C_5: J_per_m3 {init: 400000, interface: public};
    var l_A_basilar_C_5: metre {init: 0.00173, interface: public};
    var r_0_A_basilar_C_5: metre {init: 0.00172, interface: public};
    var u_0_A_basilar_C_5: J_per_m3 {init: 0, interface: public};
    var theta_A_basilar_C_5: dimensionless {init: 0, interface: public};
    var u_ext_A_basilar_C_5: J_per_m3 {init: 0, interface: public};
    var E_A_internal_carotid_L_2: J_per_m3 {init: 400000, interface: public};
    var l_A_internal_carotid_L_2: metre {init: 0.135, interface: public};
    var r_0_A_internal_carotid_L_2: metre {init: 0.00205, interface: public};
    var u_0_A_internal_carotid_L_2: J_per_m3 {init: 0, interface: public};
    var theta_A_internal_carotid_L_2: dimensionless {init: 0, interface: public};
    var u_ext_A_internal_carotid_L_2: J_per_m3 {init: 0, interface: public};
    var E_A_basilar_C_4: J_per_m3 {init: 400000, interface: public};
    var l_A_basilar_C_4: metre {init: 0.00199, interface: public};
    var r_0_A_basilar_C_4: metre {init: 0.00172, interface: public};
    var u_0_A_basilar_C_4: J_per_m3 {init: 0, interface: public};
    var theta_A_basilar_C_4: dimensionless {init: 0, interface: public};
    var u_ext_A_basilar_C_4: J_per_m3 {init: 0, interface: public};
    var E_A_anterior_inferior_cerebellar_R: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_inferior_cerebellar_R: metre {init: 0.0375, interface: public};
    var r_0_A_anterior_inferior_cerebellar_R: metre {init: 0.000366, interface: public};
    var u_0_A_anterior_inferior_cerebellar_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_inferior_cerebellar_R: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_inferior_cerebellar_R: dimensionless {init: 0, interface: public};
    var E_A_internal_carotid_R_2: J_per_m3 {init: 400000, interface: public};
    var l_A_internal_carotid_R_2: metre {init: 0.135, interface: public};
    var r_0_A_internal_carotid_R_2: metre {init: 0.00205, interface: public};
    var u_0_A_internal_carotid_R_2: J_per_m3 {init: 0, interface: public};
    var theta_A_internal_carotid_R_2: dimensionless {init: 0, interface: public};
    var u_ext_A_internal_carotid_R_2: J_per_m3 {init: 0, interface: public};
    var E_A_posterior_communicating_L: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_communicating_L: metre {init: 0.0167, interface: public};
    var r_0_A_posterior_communicating_L: metre {init: 0.000494, interface: public};
    var u_0_A_posterior_communicating_L: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_communicating_L: dimensionless {init: 0, interface: public};
    var u_ext_A_posterior_communicating_L: J_per_m3 {init: 0, interface: public};
    var E_A_internal_carotid_L_1: J_per_m3 {init: 400000, interface: public};
    var l_A_internal_carotid_L_1: metre {init: 0.00197, interface: public};
    var r_0_A_internal_carotid_L_1: metre {init: 0.00133, interface: public};
    var u_0_A_internal_carotid_L_1: J_per_m3 {init: 0, interface: public};
    var theta_A_internal_carotid_L_1: dimensionless {init: 0, interface: public};
    var u_ext_A_internal_carotid_L_1: J_per_m3 {init: 0, interface: public};
    var E_A_anterior_inferior_cerebellar_L: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_inferior_cerebellar_L: metre {init: 0.0375, interface: public};
    var r_0_A_anterior_inferior_cerebellar_L: metre {init: 0.000366, interface: public};
    var u_0_A_anterior_inferior_cerebellar_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_inferior_cerebellar_L: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_inferior_cerebellar_L: dimensionless {init: 0, interface: public};
    var E_A_internal_carotid_R_1: J_per_m3 {init: 400000, interface: public};
    var l_A_internal_carotid_R_1: metre {init: 0.00197, interface: public};
    var r_0_A_internal_carotid_R_1: metre {init: 0.00133, interface: public};
    var u_0_A_internal_carotid_R_1: J_per_m3 {init: 0, interface: public};
    var theta_A_internal_carotid_R_1: dimensionless {init: 0, interface: public};
    var u_ext_A_internal_carotid_R_1: J_per_m3 {init: 0, interface: public};
    var E_A_posterior_communicating_R: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_communicating_R: metre {init: 0.0167, interface: public};
    var r_0_A_posterior_communicating_R: metre {init: 0.000494, interface: public};
    var u_0_A_posterior_communicating_R: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_communicating_R: dimensionless {init: 0, interface: public};
    var u_ext_A_posterior_communicating_R: J_per_m3 {init: 0, interface: public};
    var E_A_anterior_cerebral_L_1: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_cerebral_L_1: metre {init: 0.0107, interface: public};
    var r_0_A_anterior_cerebral_L_1: metre {init: 0.000965, interface: public};
    var u_0_A_anterior_cerebral_L_1: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_cerebral_L_1: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_cerebral_L_1: dimensionless {init: 0, interface: public};
    var E_A_anterior_cerebral_R_1: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_cerebral_R_1: metre {init: 0.0107, interface: public};
    var r_0_A_anterior_cerebral_R_1: metre {init: 0.000965, interface: public};
    var u_0_A_anterior_cerebral_R_1: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_cerebral_R_1: dimensionless {init: 0, interface: public};
    var u_ext_A_anterior_cerebral_R_1: J_per_m3 {init: 0, interface: public};
    var E_A_basilar_C_3: J_per_m3 {init: 400000, interface: public};
    var l_A_basilar_C_3: metre {init: 0.0162, interface: public};
    var r_0_A_basilar_C_3: metre {init: 0.00172, interface: public};
    var u_0_A_basilar_C_3: J_per_m3 {init: 0, interface: public};
    var theta_A_basilar_C_3: dimensionless {init: 0, interface: public};
    var u_ext_A_basilar_C_3: J_per_m3 {init: 0, interface: public};
    var E_A_superior_cerebellar_L: J_per_m3 {init: 400000, interface: public};
    var l_A_superior_cerebellar_L: metre {init: 0.0468, interface: public};
    var r_0_A_superior_cerebellar_L: metre {init: 0.000559, interface: public};
    var u_0_A_superior_cerebellar_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_superior_cerebellar_L: J_per_m3 {init: 0, interface: public};
    var theta_A_superior_cerebellar_L: dimensionless {init: 0, interface: public};
    var E_A_basilar_C_2: J_per_m3 {init: 400000, interface: public};
    var l_A_basilar_C_2: metre {init: 0.00145, interface: public};
    var r_0_A_basilar_C_2: metre {init: 0.00172, interface: public};
    var u_0_A_basilar_C_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_basilar_C_2: J_per_m3 {init: 0, interface: public};
    var theta_A_basilar_C_2: dimensionless {init: 0, interface: public};
    var E_A_middle_cerebral_L: J_per_m3 {init: 400000, interface: public};
    var l_A_middle_cerebral_L: metre {init: 0.0303, interface: public};
    var r_0_A_middle_cerebral_L: metre {init: 0.00104, interface: public};
    var u_0_A_middle_cerebral_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_middle_cerebral_L: J_per_m3 {init: 0, interface: public};
    var theta_A_middle_cerebral_L: dimensionless {init: 0, interface: public};
    var E_A_basilar_C_1: J_per_m3 {init: 400000, interface: public};
    var l_A_basilar_C_1: metre {init: 0.0014, interface: public};
    var r_0_A_basilar_C_1: metre {init: 0.00172, interface: public};
    var u_0_A_basilar_C_1: J_per_m3 {init: 0, interface: public};
    var theta_A_basilar_C_1: dimensionless {init: 0, interface: public};
    var u_ext_A_basilar_C_1: J_per_m3 {init: 0, interface: public};
    var E_A_superior_cerebellar_R: J_per_m3 {init: 400000, interface: public};
    var l_A_superior_cerebellar_R: metre {init: 0.0479, interface: public};
    var r_0_A_superior_cerebellar_R: metre {init: 0.000559, interface: public};
    var u_0_A_superior_cerebellar_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_superior_cerebellar_R: J_per_m3 {init: 0, interface: public};
    var theta_A_superior_cerebellar_R: dimensionless {init: 0, interface: public};
    var E_A_middle_cerebral_R: J_per_m3 {init: 400000, interface: public};
    var l_A_middle_cerebral_R: metre {init: 0.0303, interface: public};
    var r_0_A_middle_cerebral_R: metre {init: 0.00104, interface: public};
    var u_0_A_middle_cerebral_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_middle_cerebral_R: J_per_m3 {init: 0, interface: public};
    var theta_A_middle_cerebral_R: dimensionless {init: 0, interface: public};
    var E_A_posterior_cerebral_postcommunicating_part_L: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_cerebral_postcommunicating_part_L: metre {init: 0.0128, interface: public};
    var r_0_A_posterior_cerebral_postcommunicating_part_L: metre {init: 0.000869, interface: public};
    var u_0_A_posterior_cerebral_postcommunicating_part_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_cerebral_postcommunicating_part_L: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_cerebral_postcommunicating_part_L: dimensionless {init: 0, interface: public};
    var E_A_posterior_cerebral_precommunicating_part_L: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_cerebral_precommunicating_part_L: metre {init: 0.00708, interface: public};
    var r_0_A_posterior_cerebral_precommunicating_part_L: metre {init: 0.000816, interface: public};
    var u_0_A_posterior_cerebral_precommunicating_part_L: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_cerebral_precommunicating_part_L: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_cerebral_precommunicating_part_L: dimensionless {init: 0, interface: public};
    var E_A_posterior_cerebral_precommunicating_part_R: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_cerebral_precommunicating_part_R: metre {init: 0.00794, interface: public};
    var r_0_A_posterior_cerebral_precommunicating_part_R: metre {init: 0.000816, interface: public};
    var u_0_A_posterior_cerebral_precommunicating_part_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_cerebral_precommunicating_part_R: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_cerebral_precommunicating_part_R: dimensionless {init: 0, interface: public};
    var E_A_posterior_cerebral_postcommunicating_part_R: J_per_m3 {init: 400000, interface: public};
    var l_A_posterior_cerebral_postcommunicating_part_R: metre {init: 0.0128, interface: public};
    var r_0_A_posterior_cerebral_postcommunicating_part_R: metre {init: 0.000869, interface: public};
    var u_0_A_posterior_cerebral_postcommunicating_part_R: J_per_m3 {init: 0, interface: public};
    var u_ext_A_posterior_cerebral_postcommunicating_part_R: J_per_m3 {init: 0, interface: public};
    var theta_A_posterior_cerebral_postcommunicating_part_R: dimensionless {init: 0, interface: public};
    var E_A_anterior_cerebral_L_2: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_cerebral_L_2: metre {init: 0.0293, interface: public};
    var r_0_A_anterior_cerebral_L_2: metre {init: 0.000965, interface: public};
    var u_0_A_anterior_cerebral_L_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_cerebral_L_2: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_cerebral_L_2: dimensionless {init: 0, interface: public};
    var E_A_anterior_communicating_C: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_communicating_C: metre {init: 0.00569, interface: public};
    var r_0_A_anterior_communicating_C: metre {init: 0.000657, interface: public};
    var u_0_A_anterior_communicating_C: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_communicating_C: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_communicating_C: dimensionless {init: 0, interface: public};
    var E_A_anterior_cerebral_R_2: J_per_m3 {init: 400000, interface: public};
    var l_A_anterior_cerebral_R_2: metre {init: 0.0293, interface: public};
    var r_0_A_anterior_cerebral_R_2: metre {init: 0.000965, interface: public};
    var u_0_A_anterior_cerebral_R_2: J_per_m3 {init: 0, interface: public};
    var u_ext_A_anterior_cerebral_R_2: J_per_m3 {init: 0, interface: public};
    var theta_A_anterior_cerebral_R_2: dimensionless {init: 0, interface: public};
    var R_T_A_left_gastric_C_T: Js_per_m6 {init: 7000000000, interface: public};
    var C_T_A_left_gastric_C_T: m6_per_J {init: 1.63E-10, interface: public};
    var I_T_A_left_gastric_C_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_left_gastric_C_T: m3 {init: 0, interface: public};
    var q_init_A_left_gastric_C_T: m3 {init: 0, interface: public};
    var u_ext_A_left_gastric_C_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_left_gastric_C_T: dimensionless {init: 1, interface: public};
    var R_T_A_common_hepatic_C_T: Js_per_m6 {init: 1430000000, interface: public};
    var C_T_A_common_hepatic_C_T: m6_per_J {init: 8.02E-10, interface: public};
    var I_T_A_common_hepatic_C_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_common_hepatic_C_T: m3 {init: 0, interface: public};
    var q_init_A_common_hepatic_C_T: m3 {init: 0, interface: public};
    var u_ext_A_common_hepatic_C_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_common_hepatic_C_T: dimensionless {init: 1, interface: public};
    var R_T_A_splenic_C_T: Js_per_m6 {init: 3030000000, interface: public};
    var C_T_A_splenic_C_T: m6_per_J {init: 3.77E-10, interface: public};
    var I_T_A_splenic_C_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_splenic_C_T: m3 {init: 0, interface: public};
    var q_init_A_splenic_C_T: m3 {init: 0, interface: public};
    var u_ext_A_splenic_C_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_splenic_C_T: dimensionless {init: 1, interface: public};
    var R_T_A_superior_mesenteric_C_T: Js_per_m6 {init: 1070000000, interface: public};
    var C_T_A_superior_mesenteric_C_T: m6_per_J {init: 0.00000000107, interface: public};
    var I_T_A_superior_mesenteric_C_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_superior_mesenteric_C_T: m3 {init: 0, interface: public};
    var q_init_A_superior_mesenteric_C_T: m3 {init: 0, interface: public};
    var u_ext_A_superior_mesenteric_C_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_superior_mesenteric_C_T: dimensionless {init: 1, interface: public};
    var R_T_A_renal_L_T: Js_per_m6 {init: 1110000000, interface: public};
    var C_T_A_renal_L_T: m6_per_J {init: 0.0000000103, interface: public};
    var I_T_A_renal_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_renal_L_T: m3 {init: 0, interface: public};
    var q_init_A_renal_L_T: m3 {init: 0, interface: public};
    var u_ext_A_renal_L_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_renal_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_renal_R_T: Js_per_m6 {init: 1110000000, interface: public};
    var C_T_A_renal_R_T: m6_per_J {init: 0.00000000103, interface: public};
    var I_T_A_renal_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_renal_R_T: m3 {init: 0, interface: public};
    var q_init_A_renal_R_T: m3 {init: 0, interface: public};
    var u_ext_A_renal_R_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_renal_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_inferior_mesenteric_C_T: Js_per_m6 {init: 2670000000, interface: public};
    var C_T_A_inferior_mesenteric_C_T: m6_per_J {init: 4.28E-10, interface: public};
    var I_T_A_inferior_mesenteric_C_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_inferior_mesenteric_C_T: m3 {init: 0, interface: public};
    var q_init_A_inferior_mesenteric_C_T: m3 {init: 0, interface: public};
    var u_ext_A_inferior_mesenteric_C_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_inferior_mesenteric_C_T: dimensionless {init: 1, interface: public};
    var R_T_A_radial_L_T: Js_per_m6 {init: 3600000000, interface: public};
    var C_T_A_radial_L_T: m6_per_J {init: 3.17E-10, interface: public};
    var I_T_A_radial_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_radial_L_T: m3 {init: 0, interface: public};
    var q_init_A_radial_L_T: m3 {init: 0, interface: public};
    var u_ext_A_radial_L_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_radial_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_ulnar_L_T: Js_per_m6 {init: 3120000000, interface: public};
    var C_T_A_ulnar_L_T: m6_per_J {init: 3.66E-10, interface: public};
    var I_T_A_ulnar_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_ulnar_L_T: m3 {init: 0, interface: public};
    var q_init_A_ulnar_L_T: m3 {init: 0, interface: public};
    var u_ext_A_ulnar_L_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_ulnar_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_radial_R_T: Js_per_m6 {init: 3600000000, interface: public};
    var C_T_A_radial_R_T: m6_per_J {init: 3.17E-10, interface: public};
    var I_T_A_radial_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_radial_R_T: m3 {init: 0, interface: public};
    var q_init_A_radial_R_T: m3 {init: 0, interface: public};
    var u_ext_A_radial_R_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_radial_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_ulnar_R_T: Js_per_m6 {init: 3250000000, interface: public};
    var C_T_A_ulnar_R_T: m6_per_J {init: 3.52E-10, interface: public};
    var I_T_A_ulnar_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_ulnar_R_T: m3 {init: 0, interface: public};
    var q_init_A_ulnar_R_T: m3 {init: 0, interface: public};
    var u_ext_A_ulnar_R_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_A_ulnar_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_internal_iliac_L_T: Js_per_m6 {init: 4400000000, interface: public};
    var C_T_A_internal_iliac_L_T: m6_per_J {init: 2.6E-10, interface: public};
    var I_T_A_internal_iliac_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_internal_iliac_L_T: m3 {init: 0, interface: public};
    var q_init_A_internal_iliac_L_T: m3 {init: 0, interface: public};
    var u_ext_A_internal_iliac_L_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_internal_iliac_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_internal_iliac_R_T: Js_per_m6 {init: 4400000000, interface: public};
    var C_T_A_internal_iliac_R_T: m6_per_J {init: 2.6E-10, interface: public};
    var I_T_A_internal_iliac_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_internal_iliac_R_T: m3 {init: 0, interface: public};
    var q_init_A_internal_iliac_R_T: m3 {init: 0, interface: public};
    var u_ext_A_internal_iliac_R_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_internal_iliac_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_profunda_femoris_L_T: Js_per_m6 {init: 1850000000, interface: public};
    var C_T_A_profunda_femoris_L_T: m6_per_J {init: 6.17E-10, interface: public};
    var I_T_A_profunda_femoris_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_profunda_femoris_L_T: m3 {init: 0, interface: public};
    var q_init_A_profunda_femoris_L_T: m3 {init: 0, interface: public};
    var u_ext_A_profunda_femoris_L_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_profunda_femoris_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_profunda_femoris_R_T: Js_per_m6 {init: 1850000000, interface: public};
    var C_T_A_profunda_femoris_R_T: m6_per_J {init: 6.17E-10, interface: public};
    var I_T_A_profunda_femoris_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_profunda_femoris_R_T: m3 {init: 0, interface: public};
    var q_init_A_profunda_femoris_R_T: m3 {init: 0, interface: public};
    var u_ext_A_profunda_femoris_R_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_profunda_femoris_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_anterior_tibial_L_T: Js_per_m6 {init: 11300000000, interface: public};
    var C_T_A_anterior_tibial_L_T: m6_per_J {init: 1.01E-10, interface: public};
    var I_T_A_anterior_tibial_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_anterior_tibial_L_T: m3 {init: 0, interface: public};
    var q_init_A_anterior_tibial_L_T: m3 {init: 0, interface: public};
    var u_ext_A_anterior_tibial_L_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_anterior_tibial_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_anterior_tibial_R_T: Js_per_m6 {init: 11300000000, interface: public};
    var C_T_A_anterior_tibial_R_T: m6_per_J {init: 1.01E-10, interface: public};
    var I_T_A_anterior_tibial_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_anterior_tibial_R_T: m3 {init: 0, interface: public};
    var q_init_A_anterior_tibial_R_T: m3 {init: 0, interface: public};
    var u_ext_A_anterior_tibial_R_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_anterior_tibial_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_posterior_tibial_L_T: Js_per_m6 {init: 13800000000, interface: public};
    var C_T_A_posterior_tibial_L_T: m6_per_J {init: 8.28E-11, interface: public};
    var I_T_A_posterior_tibial_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_posterior_tibial_L_T: m3 {init: 0, interface: public};
    var q_init_A_posterior_tibial_L_T: m3 {init: 0, interface: public};
    var u_ext_A_posterior_tibial_L_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_posterior_tibial_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_fibular_L_T: Js_per_m6 {init: 49900000000, interface: public};
    var C_T_A_fibular_L_T: m6_per_J {init: 2.29E-11, interface: public};
    var I_T_A_fibular_L_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_fibular_L_T: m3 {init: 0, interface: public};
    var q_init_A_fibular_L_T: m3 {init: 0, interface: public};
    var u_ext_A_fibular_L_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_fibular_L_T: dimensionless {init: 1, interface: public};
    var R_T_A_fibular_R_T: Js_per_m6 {init: 49900000000, interface: public};
    var C_T_A_fibular_R_T: m6_per_J {init: 2.29E-11, interface: public};
    var I_T_A_fibular_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_fibular_R_T: m3 {init: 0, interface: public};
    var q_init_A_fibular_R_T: m3 {init: 0, interface: public};
    var u_ext_A_fibular_R_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_fibular_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_posterior_tibial_R_T: Js_per_m6 {init: 13800000000, interface: public};
    var C_T_A_posterior_tibial_R_T: m6_per_J {init: 8.28E-11, interface: public};
    var I_T_A_posterior_tibial_R_T: Js2_per_m6 {init: 0.000001, interface: public};
    var q_us_A_posterior_tibial_R_T: m3 {init: 0, interface: public};
    var q_init_A_posterior_tibial_R_T: m3 {init: 0, interface: public};
    var u_ext_A_posterior_tibial_R_T: J_per_m3 {init: -4000, interface: public};
    var R_local_multiplier_A_posterior_tibial_R_T: dimensionless {init: 1, interface: public};
    var R_T_A_external_carotid_L_T: Js_per_m6 {init: 2440000000, interface: public};
    var C_T_A_external_carotid_L_T: m6_per_J {init: 4.69E-10, interface: public};
    var u_ext_A_external_carotid_L_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_external_carotid_L_T: m3 {init: 0, interface: public};
    var q_init_A_external_carotid_L_T: m3 {init: 0, interface: public};
    var R_T_A_external_carotid_R_T: Js_per_m6 {init: 2440000000, interface: public};
    var C_T_A_external_carotid_R_T: m6_per_J {init: 4.69E-10, interface: public};
    var u_ext_A_external_carotid_R_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_external_carotid_R_T: m3 {init: 0, interface: public};
    var q_init_A_external_carotid_R_T: m3 {init: 0, interface: public};
    var R_T_A_posterior_inferior_cerebellar_R_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_posterior_inferior_cerebellar_R_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_posterior_inferior_cerebellar_R_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_posterior_inferior_cerebellar_R_T: m3 {init: 0, interface: public};
    var q_init_A_posterior_inferior_cerebellar_R_T: m3 {init: 0, interface: public};
    var R_T_A_posterior_inferior_cerebellar_L_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_posterior_inferior_cerebellar_L_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_posterior_inferior_cerebellar_L_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_posterior_inferior_cerebellar_L_T: m3 {init: 0, interface: public};
    var q_init_A_posterior_inferior_cerebellar_L_T: m3 {init: 0, interface: public};
    var R_T_A_anterior_inferior_cerebellar_R_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_anterior_inferior_cerebellar_R_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_anterior_inferior_cerebellar_R_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_anterior_inferior_cerebellar_R_T: m3 {init: 0, interface: public};
    var q_init_A_anterior_inferior_cerebellar_R_T: m3 {init: 0, interface: public};
    var R_T_A_anterior_inferior_cerebellar_L_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_anterior_inferior_cerebellar_L_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_anterior_inferior_cerebellar_L_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_anterior_inferior_cerebellar_L_T: m3 {init: 0, interface: public};
    var q_init_A_anterior_inferior_cerebellar_L_T: m3 {init: 0, interface: public};
    var R_T_A_superior_cerebellar_L_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_superior_cerebellar_L_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_superior_cerebellar_L_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_superior_cerebellar_L_T: m3 {init: 0, interface: public};
    var q_init_A_superior_cerebellar_L_T: m3 {init: 0, interface: public};
    var R_T_A_middle_cerebral_L_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_middle_cerebral_L_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_middle_cerebral_L_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_middle_cerebral_L_T: m3 {init: 0, interface: public};
    var q_init_A_middle_cerebral_L_T: m3 {init: 0, interface: public};
    var R_T_A_superior_cerebellar_R_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_superior_cerebellar_R_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_superior_cerebellar_R_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_superior_cerebellar_R_T: m3 {init: 0, interface: public};
    var q_init_A_superior_cerebellar_R_T: m3 {init: 0, interface: public};
    var R_T_A_middle_cerebral_R_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_middle_cerebral_R_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_middle_cerebral_R_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_middle_cerebral_R_T: m3 {init: 0, interface: public};
    var q_init_A_middle_cerebral_R_T: m3 {init: 0, interface: public};
    var R_T_A_posterior_cerebral_postcommunicating_part_L_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_posterior_cerebral_postcommunicating_part_L_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_posterior_cerebral_postcommunicating_part_L_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_posterior_cerebral_postcommunicating_part_L_T: m3 {init: 0, interface: public};
    var q_init_A_posterior_cerebral_postcommunicating_part_L_T: m3 {init: 0, interface: public};
    var R_T_A_posterior_cerebral_postcommunicating_part_R_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_posterior_cerebral_postcommunicating_part_R_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_posterior_cerebral_postcommunicating_part_R_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_posterior_cerebral_postcommunicating_part_R_T: m3 {init: 0, interface: public};
    var q_init_A_posterior_cerebral_postcommunicating_part_R_T: m3 {init: 0, interface: public};
    var R_T_A_anterior_cerebral_L_2_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_anterior_cerebral_L_2_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_anterior_cerebral_L_2_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_anterior_cerebral_L_2_T: m3 {init: 0, interface: public};
    var q_init_A_anterior_cerebral_L_2_T: m3 {init: 0, interface: public};
    var R_T_A_anterior_cerebral_R_2_T: Js_per_m6 {init: 1570000000, interface: public};
    var C_T_A_anterior_cerebral_R_2_T: m6_per_J {init: 7.29E-10, interface: public};
    var u_ext_A_anterior_cerebral_R_2_T: J_per_m3 {init: 0, interface: public};
    var q_us_A_anterior_cerebral_R_2_T: m3 {init: 0, interface: public};
    var q_init_A_anterior_cerebral_R_2_T: m3 {init: 0, interface: public};
    var R_venous_lb: Js_per_m6 {init: 0.0000001, interface: public};
    var C_venous_lb: m6_per_J {init: 0.00000015, interface: public};
    var u_ext_venous_lb: J_per_m3 {init: -4000, interface: public};
    var I_venous_lb: Js2_per_m6 {init: 0.0000001, interface: public};
    var q_C_init_venous_lb: m3 {init: 0, interface: public};
    var q_us_0_venous_lb: m3 {init: 0, interface: public};
    var R_venous_ub: Js_per_m6 {init: 0.0000001, interface: public};
    var C_venous_ub: m6_per_J {init: 0.00000015, interface: public};
    var u_ext_venous_ub: J_per_m3 {init: 0, interface: public};
    var I_venous_ub: Js2_per_m6 {init: 0.0000001, interface: public};
    var q_C_init_venous_ub: m3 {init: 0, interface: public};
    var q_us_0_venous_ub: m3 {init: 0, interface: public};
    var R_venous_ivc: Js_per_m6 {init: 0.0000001, interface: public};
    var C_venous_ivc: m6_per_J {init: 0.00000015, interface: public};
    var u_ext_venous_ivc: J_per_m3 {init: -4000, interface: public};
    var I_venous_ivc: Js2_per_m6 {init: 0.0000001, interface: public};
    var q_C_init_venous_ivc: m3 {init: 0, interface: public};
    var q_us_0_venous_ivc: m3 {init: 0, interface: public};
    var R_venous_svc: Js_per_m6 {init: 0.0000001, interface: public};
    var C_venous_svc: m6_per_J {init: 0.00000015, interface: public};
    var u_ext_venous_svc: J_per_m3 {init: 0, interface: public};
    var I_venous_svc: Js2_per_m6 {init: 0.0000001, interface: public};
    var q_C_init_venous_svc: m3 {init: 0, interface: public};
    var q_us_0_venous_svc: m3 {init: 0, interface: public};
    var P_baro_init_common_carotida_L_baro: J_per_m3 {init: 12399, interface: public};
    var P_nom_common_carotida_L_baro: J_per_m3 {init: 12399, interface: public};
    var tau_zb_common_carotida_L_baro: second {init: 6.37, interface: public};
    var tau_pb_common_carotida_L_baro: second {init: 2.076, interface: public};
    var f_ab_min_common_carotida_L_baro: Hz {init: 2.52, interface: public};
    var f_ab_max_common_carotida_L_baro: Hz {init: 47.78, interface: public};
    var k_ab_common_carotida_L_baro: J_per_m3 {init: 1567, interface: public};
    var f_apc_vagal_efferent: Hz {init: 1, interface: public};
    var W_bs_sympathetic_efferent: dimensionless {init: -1.1375, interface: public};
    var W_cs_sympathetic_efferent: dimensionless {init: 1.56, interface: public};
    var f_apc_sympathetic_efferent: Hz {init: 1, interface: public};
    var G_theta_trunk_resistance_effector: Js_per_m6 {init: 92657400, interface: public};
    var tau_theta_trunk_resistance_effector: second {init: 6, interface: public};
    var G_theta_arm_leg_resistance_effector: Js_per_m6 {init: 329000000, interface: public};
    var tau_theta_arm_leg_resistance_effector: second {init: 6, interface: public};
    var G_theta_lv_elastance_effector: J_per_m6 {init: 63330000, interface: public};
    var tau_theta_lv_elastance_effector: second {init: 8, interface: public};
    var G_theta_rv_elastance_effector: J_per_m6 {init: 37600000, interface: public};
    var tau_theta_rv_elastance_effector: second {init: 8, interface: public};
    var G_Ts_heart_period_effector: second {init: -0.13, interface: public};
    var G_Tv_heart_period_effector: s2 {init: 0.09, interface: public};
    var tau_Ts_heart_period_effector: second {init: 2, interface: public};
    var tau_Tv_heart_period_effector: second {init: 1.5, interface: public};
    var G_theta_us_venous_us_volume_effector: dimensionless {init: -0.0002, interface: public};
    var G_theta_compliance_venous_us_volume_effector: dimensionless {init: -0.0001, interface: public};
    var tau_theta_us_venous_us_volume_effector: second {init: 20, interface: public};
    var tau_theta_compliance_venous_us_volume_effector: second {init: 30, interface: public};
    var q_0_par: m3 {init: 0, interface: public};
    var R_par: Js_per_m6 {init: 9300000, interface: public};
    var C_par: m6_per_J {init: 3.09E-10, interface: public};
    var I_par: Js2_per_m6 {init: 0.000001, interface: public};
    var u_ext_par: J_per_m3 {init: 0, interface: public};
    var u_0_par: J_per_m3 {init: 0, interface: public};
    var q_0_pvn: m3 {init: 0, interface: public};
    var R_pvn: Js_per_m6 {init: 1330000, interface: public};
    var C_pvn: m6_per_J {init: 0.000000006, interface: public};
    var I_pvn: Js2_per_m6 {init: 0.000001, interface: public};
    var u_ext_pvn: J_per_m3 {init: 0, interface: public};
    var u_0_pvn: J_per_m3 {init: 0, interface: public};
  enddef;

  def comp parameters_global as
    var rho: kg_per_m3 {init: 1050, interface: public};
    var T: second {init: 1, interface: public};
    var T_min: second {init: 0.4, interface: public};
    var q_ra_us: m3 {init: 0.000004, interface: public};
    var q_rv_us: m3 {init: 0.00001, interface: public};
    var q_la_us: m3 {init: 0.000004, interface: public};
    var q_lv_us: m3 {init: 0.000005, interface: public};
    var q_ra_init: m3 {init: 0.000004, interface: public};
    var q_rv_init: m3 {init: 0.00001, interface: public};
    var q_la_init: m3 {init: 0.000004, interface: public};
    var q_lv_init: m3 {init: 0.0017201147722, interface: public};
    var T_ac: second {init: 0.17, interface: public};
    var T_ar: second {init: 0.17, interface: public};
    var t_astart: second {init: 0.8, interface: public};
    var T_vc: second {init: 0.34, interface: public};
    var T_vr: second {init: 0.15, interface: public};
    var t_vstart: second {init: 0, interface: public};
    var E_ra_A: J_per_m6 {init: 9900000, interface: public};
    var E_ra_B: J_per_m6 {init: 9330000, interface: public};
    var E_rv_A: J_per_m6 {init: 89200000, interface: public};
    var E_rv_B: J_per_m6 {init: 6670000, interface: public};
    var E_la_A: J_per_m6 {init: 10100000, interface: public};
    var E_la_B: J_per_m6 {init: 12000000, interface: public};
    var E_lv_A: J_per_m6 {init: 70009668.453, interface: public};
    var E_lv_B: J_per_m6 {init: 20791898.445, interface: public};
    var K_vo_trv: m3_per_Js {init: 0.3, interface: public};
    var K_vo_puv: m3_per_Js {init: 0.2, interface: public};
    var K_vo_miv: m3_per_Js {init: 0.3, interface: public};
    var K_vo_aov: m3_per_Js {init: 0.12, interface: public};
    var K_vc_trv: m3_per_Js {init: 0.4, interface: public};
    var K_vc_puv: m3_per_Js {init: 0.2, interface: public};
    var K_vc_miv: m3_per_Js {init: 0.4, interface: public};
    var K_vc_aov: m3_per_Js {init: 0.12, interface: public};
    var M_rg_trv: dimensionless {init: 0, interface: public};
    var M_rg_puv: dimensionless {init: 0, interface: public};
    var M_rg_miv: dimensionless {init: 0, interface: public};
    var M_rg_aov: dimensionless {init: 0, interface: public};
    var M_st_trv: dimensionless {init: 1, interface: public};
    var M_st_puv: dimensionless {init: 1, interface: public};
    var M_st_miv: dimensionless {init: 1, interface: public};
    var M_st_aov: dimensionless {init: 1, interface: public};
    var l_eff: metre {init: 0.02, interface: public};
    var A_nn_trv: m2 {init: 0.0008, interface: public};
    var A_nn_puv: m2 {init: 0.00071, interface: public};
    var A_nn_miv: m2 {init: 0.00077, interface: public};
    var A_nn_aov: m2 {init: 0.00068, interface: public};
    var beta_g: dimensionless {init: 0, interface: public};
    var mu: Js_per_m3 {init: 0.004, interface: public};
    var g: m_per_s2 {init: 9.81, interface: public};
    var a_vessel: dimensionless {init: 0.28, interface: public};
    var b_vessel: per_m {init: -505, interface: public};
    var c_vessel: dimensionless {init: 0.132, interface: public};
    var d_vessel: per_m {init: -11.1, interface: public};
    var W_cv: dimensionless {init: 0.208, interface: public};
    var f_ev_0: Hz {init: 3.2, interface: public};
    var f_ev_inf: Hz {init: 6.3, interface: public};
    var f_ab_0: Hz {init: 25, interface: public};
    var theta_v: Hz {init: -0.68, interface: public};
    var k_ev: Hz {init: 7.06, interface: public};
    var f_es_0: Hz {init: 16.11, interface: public};
    var f_es_inf: Hz {init: 2.1, interface: public};
    var f_es_max: Hz {init: 60, interface: public};
    var k_es: second {init: 0.0675, interface: public};
    var f_es_min: Hz {init: 2.66, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp heart_module as
    var t: second {interface: public};
    var s: dimensionless {init: 0.0, interface: public};
    var mt: dimensionless {interface: public};
    var e_a: dimensionless {interface: public};
    var e_v: dimensionless {interface: public};
    var T: second {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var t_astart: second {interface: public};
    var t_astart_norm: dimensionless {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var t_vstart: second {interface: public};
    var t_vstart_norm: dimensionless {interface: public};
    var T_wCont: second {interface: public};
    var T_ac_wCont: second {interface: public};
    var T_ar_wCont: second {interface: public};
    var T_vc_wCont: second {interface: public};
    var T_vr_wCont: second {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var u_ra: J_per_m3 {interface: public};
    var u_rv: J_per_m3 {interface: public};
    var u_la: J_per_m3 {interface: public};
    var u_lv: J_per_m3 {interface: public};
    var u_root: J_per_m3 {interface: public};
    var u_par: J_per_m3 {interface: public};
    var v_trv: m3_per_s {init: 0, interface: public};
    var v_puv: m3_per_s {init: 0, interface: public};
    var v_miv: m3_per_s {init: 0, interface: public};
    var v_aov: m3_per_s {init: 0, interface: public};
    var v_svc: m3_per_s {interface: public};
    var v_ivc: m3_per_s {interface: public};
    var v_pvn: m3_per_s {interface: public};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {interface: public};
    var A_eff_puv: m2 {interface: public};
    var A_eff_miv: m2 {interface: public};
    var A_eff_aov: m2 {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var l_eff: metre {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var rho: kg_per_m3 {interface: public};
    var B_trv: Js2_per_m9 {interface: public};
    var B_puv: Js2_per_m9 {interface: public};
    var B_miv: Js2_per_m9 {interface: public};
    var B_aov: Js2_per_m9 {interface: public};
    var zeta_trv: dimensionless {interface: public};
    var zeta_puv: dimensionless {interface: public};
    var zeta_miv: dimensionless {interface: public};
    var zeta_aov: dimensionless {interface: public};
    var zeta_trv_pre: dimensionless {init: 0, interface: public};
    var zeta_puv_pre: dimensionless {init: 0, interface: public};
    var zeta_miv_pre: dimensionless {init: 0, interface: public};
    var zeta_aov_pre: dimensionless {init: 0, interface: public};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    var q_lv: m3 {init: q_lv_init, interface: public};
    var q_rv: m3 {init: q_rv_init, interface: public};
    var q_la: m3 {init: q_la_init, interface: public};
    var q_ra: m3 {init: q_ra_init, interface: public};
    var chi_a: dimensionless {init: 0.0, interface: public};
    var chi_afloor: dimensionless {interface: public};
    var chi_afloor_final: dimensionless;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    var Delta_T: second {interface: public};
    var T_min: second {interface: public};
    var E_rv_A_wCont: J_per_m6 {interface: public};
    var E_lv_A_wCont: J_per_m6 {interface: public};
    var Delta_E_rv: J_per_m6 {interface: public};
    var Delta_E_lv: J_per_m6 {interface: public};
    var q_heart: m3 {interface: public};
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac_wCont;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_ac_wCont-T_ar_wCont);
      otherwise:
        0.0{Hz};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc_wCont;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T_wCont-T_vc_wCont-T_vr_wCont);
      otherwise:
        0.0{Hz};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    T_wCont = max(T+Delta_T, T_min);
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    // TODO FIGURE OUT A REALISTIC WAY TO CONTROL t_astart and t_vstart so that it changes with changes in period
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp A_thoracic_aorta_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_aortic_arch_C_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_C: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_aortic_arch_C_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_aortic_arch_C_3_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_aortic_arch_C_4_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_abdominal_aorta_C_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_abdominal_aorta_C_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_abdominal_aorta_C_3_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_abdominal_aorta_C_4_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_abdominal_aorta_C_5_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_abdominal_aorta_C_6_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_brachiocephalic_trunk_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_common_carotida_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_subclavian_L_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_celiac_trunk_C_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_celiac_trunk_C_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_left_gastric_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_common_hepatic_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_splenic_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_superior_mesenteric_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_renal_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_renal_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_inferior_mesenteric_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_common_iliac_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_common_iliac_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_subclavian_R_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_common_carotida_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_subclavian_L_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_vertebral_L_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_external_iliac_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_internal_iliac_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_external_iliac_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_internal_iliac_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_subclavian_R_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_vertebral_R_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_femoral_L_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_femoral_R_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_axillary_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_axillary_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_brachial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_brachial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_radial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_ulnar_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_radial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_ulnar_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_profunda_femoris_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_femoral_L_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_femoral_R_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_profunda_femoris_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_popliteal_L_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_popliteal_R_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_popliteal_L_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_anterior_tibial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_popliteal_R_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_anterior_tibial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_tibiofibular_trunk_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_tibiofibular_trunk_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_posterior_tibial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_fibular_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_fibular_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_posterior_tibial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_external_carotid_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_external_carotid_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_vertebral_R_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_posterior_inferior_cerebellar_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_posterior_inferior_cerebellar_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_vertebral_L_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_basilar_C_5_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_internal_carotid_L_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_basilar_C_4_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_anterior_inferior_cerebellar_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_internal_carotid_R_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_posterior_communicating_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_internal_carotid_L_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_anterior_inferior_cerebellar_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_internal_carotid_R_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_posterior_communicating_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_anterior_cerebral_L_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_anterior_cerebral_R_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_basilar_C_3_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp A_superior_cerebellar_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_basilar_C_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_middle_cerebral_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_basilar_C_1_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C;
    u = u_0+u_ext+u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp A_superior_cerebellar_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp A_middle_cerebral_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_posterior_cerebral_precommunicating_part_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_posterior_cerebral_precommunicating_part_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_anterior_cerebral_L_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp A_anterior_communicating_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp A_anterior_cerebral_R_2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp A_left_gastric_C_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_common_hepatic_C_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_splenic_C_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_superior_mesenteric_C_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_renal_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_renal_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_inferior_mesenteric_C_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_radial_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_ulnar_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_radial_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_ulnar_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_internal_iliac_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_internal_iliac_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_profunda_femoris_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_profunda_femoris_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_anterior_tibial_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_anterior_tibial_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_posterior_tibial_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_fibular_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_fibular_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_posterior_tibial_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp A_external_carotid_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_external_carotid_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_posterior_inferior_cerebellar_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_posterior_inferior_cerebellar_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_anterior_inferior_cerebellar_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_anterior_inferior_cerebellar_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_superior_cerebellar_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_middle_cerebral_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_superior_cerebellar_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_middle_cerebral_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_anterior_cerebral_L_2_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp A_anterior_cerebral_R_2_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp venous_lb_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
    var C_wCont: m6_per_J {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp venous_ub_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
    var C_wCont: m6_per_J {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp venous_ivc_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
    var C_wCont: m6_per_J {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp venous_svc_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
    var C_wCont: m6_per_J {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp common_carotida_L_baro_module as
    var t: second {interface: public};
    var P_sys: J_per_m3 {interface: public};
    var P_baro_init: J_per_m3 {interface: public};
    var P_baro: J_per_m3 {init: P_baro_init, interface: public};
    var f_ab: Hz {interface: public};
    var dP_sys_dt: J_per_m3s {interface: public};
    var P_nom: J_per_m3 {interface: public};
    var f_ab_min: Hz {interface: public};
    var f_ab_max: Hz {interface: public};
    var k_ab: J_per_m3 {interface: public};
    var tau_zb: second {interface: public};
    var tau_pb: second {interface: public};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp vagal_efferent_module as
    var t: second {interface: public};
    var f_ev_0: Hz {interface: public};
    var f_ev_inf: Hz {interface: public};
    var f_ab_0: Hz {interface: public};
    var theta_v: Hz {interface: public};
    var W_cv: dimensionless {interface: public};
    var k_ev: Hz {interface: public};
    var f_apc: Hz {interface: public};
    var f_ab: Hz {interface: public};
    var f_v: Hz {interface: public};
    f_v = (f_ev_0+f_ev_inf*exp((f_ab-f_ab_0)/k_ev))/(1{dimensionless}+exp((f_ab-f_ab_0)/k_ev))+W_cv*f_apc-theta_v;
  enddef;

  def comp sympathetic_efferent_module as
    var t: second {interface: public};
    var f_es_0: Hz {interface: public};
    var f_es_inf: Hz {interface: public};
    var f_es_max: Hz {interface: public};
    var k_es: second {interface: public};
    var W_bs: dimensionless {interface: public};
    var W_cs: dimensionless {interface: public};
    var f_apc: Hz {interface: public};
    var f_ab: Hz {interface: public};
    var f_s_premax: Hz {interface: public};
    var f_s: Hz {interface: public};
    f_s_premax = f_es_inf+(f_es_0-f_es_inf)*exp(k_es*(W_bs*f_ab+W_cs*f_apc));
    // IGNORING CNS and LUNG STRETCH
    f_s = sel
      case f_s_premax <= f_es_max:
        f_s_premax;
      otherwise:
        f_es_max;
    endsel;
  enddef;

  def comp trunk_resistance_effector_module as
    var t: second {interface: public};
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: Js_per_m6 {init: 0.0, interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp arm_leg_resistance_effector_module as
    var t: second {interface: public};
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: Js_per_m6 {init: 0.0, interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp lv_elastance_effector_module as
    var t: second {interface: public};
    var G_theta: J_per_m6 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: J_per_m6 {init: 0.0, interface: public};
    var sigma_theta: J_per_m6 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp rv_elastance_effector_module as
    var t: second {interface: public};
    var G_theta: J_per_m6 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: J_per_m6 {init: 0.0, interface: public};
    var sigma_theta: J_per_m6 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp heart_period_effector_module as
    var t: second {interface: public};
    var G_Ts: second {interface: public};
    var G_Tv: s2 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_Ts: second {interface: public};
    var tau_Tv: second {interface: public};
    var f_s: Hz {interface: public};
    var f_v: Hz {interface: public};
    var Delta_Ts: second {init: 0.0, interface: public};
    var Delta_Tv: second {init: 0.0, interface: public};
    var Delta_T: second {interface: public};
    var sigma_Ts: second {interface: public};
    var sigma_Tv: second {interface: public};
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp venous_us_volume_effector_module as
    var t: second {interface: public};
    var G_theta_us: dimensionless {interface: public};
    var G_theta_compliance: dimensionless {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta_us: second {interface: public};
    var tau_theta_compliance: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta_us: dimensionless {interface: public};
    var sigma_theta_us: Hz {init: 0.0, interface: public};
    var Delta_theta_compliance: dimensionless {interface: public};
    var sigma_theta_compliance: Hz {init: 0.0, interface: public};
    ode(sigma_theta_us, t) = (max(f_s-f_es_min, 0{Hz})-sigma_theta_us)/tau_theta_us;
    Delta_theta_us = G_theta_compliance*sigma_theta_us/(f_es_min+sigma_theta_us);
    ode(sigma_theta_compliance, t) = (max(f_s-f_es_min, 0{Hz})-sigma_theta_compliance)/tau_theta_compliance;
    Delta_theta_compliance = G_theta_compliance*sigma_theta_compliance/(f_es_min+sigma_theta_compliance);
  enddef;

  def comp par_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_0: m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    q = q_C+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v_in-v);
  enddef;

  def comp pvn_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_0: m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    q = q_C+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v_in-v);
  enddef;

  def comp terminal_venous_connection as
    var v_A_left_gastric_C_T: m3_per_s {interface: public};
    var v_A_common_hepatic_C_T: m3_per_s {interface: public};
    var v_A_splenic_C_T: m3_per_s {interface: public};
    var v_A_superior_mesenteric_C_T: m3_per_s {interface: public};
    var v_A_renal_L_T: m3_per_s {interface: public};
    var v_A_renal_R_T: m3_per_s {interface: public};
    var v_A_inferior_mesenteric_C_T: m3_per_s {interface: public};
    var v_A_radial_L_T: m3_per_s {interface: public};
    var v_A_ulnar_L_T: m3_per_s {interface: public};
    var v_A_radial_R_T: m3_per_s {interface: public};
    var v_A_ulnar_R_T: m3_per_s {interface: public};
    var v_A_internal_iliac_L_T: m3_per_s {interface: public};
    var v_A_internal_iliac_R_T: m3_per_s {interface: public};
    var v_A_profunda_femoris_L_T: m3_per_s {interface: public};
    var v_A_profunda_femoris_R_T: m3_per_s {interface: public};
    var v_A_anterior_tibial_L_T: m3_per_s {interface: public};
    var v_A_anterior_tibial_R_T: m3_per_s {interface: public};
    var v_A_posterior_tibial_L_T: m3_per_s {interface: public};
    var v_A_fibular_L_T: m3_per_s {interface: public};
    var v_A_fibular_R_T: m3_per_s {interface: public};
    var v_A_posterior_tibial_R_T: m3_per_s {interface: public};
    var v_A_external_carotid_L_T: m3_per_s {interface: public};
    var v_A_external_carotid_R_T: m3_per_s {interface: public};
    var v_A_posterior_inferior_cerebellar_R_T: m3_per_s {interface: public};
    var v_A_posterior_inferior_cerebellar_L_T: m3_per_s {interface: public};
    var v_A_anterior_inferior_cerebellar_R_T: m3_per_s {interface: public};
    var v_A_anterior_inferior_cerebellar_L_T: m3_per_s {interface: public};
    var v_A_superior_cerebellar_L_T: m3_per_s {interface: public};
    var v_A_middle_cerebral_L_T: m3_per_s {interface: public};
    var v_A_superior_cerebellar_R_T: m3_per_s {interface: public};
    var v_A_middle_cerebral_R_T: m3_per_s {interface: public};
    var v_A_posterior_cerebral_postcommunicating_part_L_T: m3_per_s {interface: public};
    var v_A_posterior_cerebral_postcommunicating_part_R_T: m3_per_s {interface: public};
    var v_A_anterior_cerebral_L_2_T: m3_per_s {interface: public};
    var v_A_anterior_cerebral_R_2_T: m3_per_s {interface: public};
    var v_venous_lb: m3_per_s {interface: public};
    var v_venous_ub: m3_per_s {interface: public};
    v_venous_lb = v_A_internal_iliac_L_T+v_A_internal_iliac_R_T+v_A_profunda_femoris_L_T+v_A_profunda_femoris_R_T+v_A_anterior_tibial_L_T+v_A_anterior_tibial_R_T+v_A_posterior_tibial_L_T+v_A_fibular_L_T+v_A_fibular_R_T+v_A_posterior_tibial_R_T;
    v_venous_ub = v_A_left_gastric_C_T+v_A_common_hepatic_C_T+v_A_splenic_C_T+v_A_superior_mesenteric_C_T+v_A_renal_L_T+v_A_renal_R_T+v_A_inferior_mesenteric_C_T+v_A_radial_L_T+v_A_ulnar_L_T+v_A_radial_R_T+v_A_ulnar_R_T+v_A_external_carotid_L_T+v_A_external_carotid_R_T+v_A_posterior_inferior_cerebellar_R_T+v_A_posterior_inferior_cerebellar_L_T+v_A_anterior_inferior_cerebellar_R_T+v_A_anterior_inferior_cerebellar_L_T+v_A_superior_cerebellar_L_T+v_A_middle_cerebral_L_T+v_A_superior_cerebellar_R_T+v_A_middle_cerebral_R_T+v_A_posterior_cerebral_postcommunicating_part_L_T+v_A_posterior_cerebral_postcommunicating_part_R_T+v_A_anterior_cerebral_L_2_T+v_A_anterior_cerebral_R_2_T;
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp sum_blood_volume as
  enddef;

  def comp heart as
    var rho: Js2_per_m5 {interface: public};
    var T: second {interface: public};
    var T_wCont: second {interface: public};
    var T_min: second {interface: public};
    var mt: dimensionless {interface: public};
    var u_ra: J_per_m3 {interface: public};
    var u_rv: J_per_m3 {interface: public};
    var u_la: J_per_m3 {interface: public};
    var u_lv: J_per_m3 {interface: public};
    var q_ra: m3 {interface: public};
    var q_rv: m3 {interface: public};
    var q_la: m3 {interface: public};
    var q_lv: m3 {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var T_ac_wCont: second {interface: public};
    var T_ar_wCont: second {interface: public};
    var t_astart: second {interface: public};
    var t_astart_norm: dimensionless {interface: public};
    var chi_a: dimensionless {interface: public};
    var chi_afloor: dimensionless {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var T_vc_wCont: second {interface: public};
    var T_vr_wCont: second {interface: public};
    var t_vstart: second {interface: public};
    var t_vstart_norm: dimensionless {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_A_wCont: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_A_wCont: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var e_a: dimensionless {interface: public};
    var e_v: dimensionless {interface: public};
    var v_trv: m3_per_s {interface: public};
    var v_puv: m3_per_s {interface: public};
    var v_miv: m3_per_s {interface: public};
    var v_aov: m3_per_s {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var l_eff: metre {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var A_eff_trv: m2 {interface: public};
    var A_eff_puv: m2 {interface: public};
    var A_eff_miv: m2 {interface: public};
    var A_eff_aov: m2 {interface: public};
    var q_heart: m3 {interface: public};
  enddef;

  def comp A_thoracic_aorta_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_aortic_arch_C_1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_aortic_arch_C_2 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_aortic_arch_C_3 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_aortic_arch_C_4 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_abdominal_aorta_C_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_abdominal_aorta_C_2 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_abdominal_aorta_C_3 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_abdominal_aorta_C_4 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_abdominal_aorta_C_5 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_abdominal_aorta_C_6 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_brachiocephalic_trunk_C as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_common_carotida_L as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_subclavian_L_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_celiac_trunk_C_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_celiac_trunk_C_2 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_left_gastric_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_common_hepatic_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_splenic_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_superior_mesenteric_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_renal_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_renal_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_inferior_mesenteric_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_common_iliac_L as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_common_iliac_R as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_subclavian_R_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_common_carotida_R as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_subclavian_L_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_vertebral_L_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_external_iliac_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_internal_iliac_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_external_iliac_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_internal_iliac_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_subclavian_R_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_vertebral_R_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_femoral_L_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_femoral_R_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_axillary_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_axillary_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_brachial_L as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_brachial_R as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_radial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_ulnar_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_radial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_ulnar_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_profunda_femoris_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_femoral_L_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_femoral_R_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_profunda_femoris_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_popliteal_L_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_popliteal_R_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_popliteal_L_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_tibial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_popliteal_R_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_tibial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_tibiofibular_trunk_L as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_tibiofibular_trunk_R as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_tibial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_fibular_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_fibular_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_tibial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_external_carotid_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_external_carotid_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_vertebral_R_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_inferior_cerebellar_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_inferior_cerebellar_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_vertebral_L_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_basilar_C_5 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_internal_carotid_L_2 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_basilar_C_4 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_inferior_cerebellar_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_internal_carotid_R_2 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_communicating_L as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_internal_carotid_L_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_inferior_cerebellar_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_internal_carotid_R_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_communicating_R as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_cerebral_L_1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_cerebral_R_1 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_basilar_C_3 as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_superior_cerebellar_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_basilar_C_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_middle_cerebral_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_basilar_C_1 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_superior_cerebellar_R as
    var u: J_per_m3 {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_middle_cerebral_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_cerebral_precommunicating_part_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_cerebral_precommunicating_part_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_cerebral_L_2 as
    var u: J_per_m3 {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_communicating_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_d: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_anterior_cerebral_R_2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var E: J_per_m3 {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var theta: dimensionless {interface: public};
    var beta_g: dimensionless {interface: public};
  enddef;

  def comp A_left_gastric_C_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_common_hepatic_C_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_splenic_C_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_superior_mesenteric_C_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_renal_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_renal_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_inferior_mesenteric_C_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_radial_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_ulnar_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_radial_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_ulnar_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_internal_iliac_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_internal_iliac_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_profunda_femoris_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_profunda_femoris_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_anterior_tibial_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_anterior_tibial_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_posterior_tibial_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_fibular_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_fibular_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_posterior_tibial_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp A_external_carotid_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_external_carotid_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_posterior_inferior_cerebellar_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_posterior_inferior_cerebellar_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_anterior_inferior_cerebellar_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_anterior_inferior_cerebellar_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_superior_cerebellar_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_middle_cerebral_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_superior_cerebellar_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_middle_cerebral_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_posterior_cerebral_postcommunicating_part_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_anterior_cerebral_L_2_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp A_anterior_cerebral_R_2_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var C_wCont: m6_per_J {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var C_wCont: m6_per_J {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var C_wCont: m6_per_J {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var C_wCont: m6_per_J {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp common_carotida_L_baro as
    var P_baro: J_per_m3 {interface: public};
    var P_baro_init: J_per_m3 {interface: public};
    var P_nom: J_per_m3 {interface: public};
    var f_ab: per_s {interface: public};
    var tau_zb: second {interface: public};
    var tau_pb: second {interface: public};
    var f_ab_min: per_s {interface: public};
    var f_ab_max: per_s {interface: public};
    var k_ab: J_per_m3 {interface: public};
  enddef;

  def comp vagal_efferent as
    var W_cv: dimensionless {interface: public};
    var f_ev_0: per_s {interface: public};
    var f_ev_inf: per_s {interface: public};
    var f_ab_0: per_s {interface: public};
    var theta_v: per_s {interface: public};
    var k_ev: per_s {interface: public};
    var f_apc: per_s {interface: public};
    var f_v: per_s {interface: public};
  enddef;

  def comp sympathetic_efferent as
    var W_bs: dimensionless {interface: public};
    var W_cs: dimensionless {interface: public};
    var f_es_0: per_s {interface: public};
    var f_es_inf: per_s {interface: public};
    var f_es_max: per_s {interface: public};
    var k_es: second {interface: public};
    var f_apc: per_s {interface: public};
    var f_s: per_s {interface: public};
  enddef;

  def comp trunk_resistance_effector as
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var Delta_theta: Js_per_m6 {interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
  enddef;

  def comp arm_leg_resistance_effector as
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var Delta_theta: Js_per_m6 {interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
  enddef;

  def comp lv_elastance_effector as
    var G_theta: J_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var Delta_theta: J_per_m6 {interface: public};
    var sigma_theta: J_per_m6 {interface: public};
  enddef;

  def comp rv_elastance_effector as
    var G_theta: J_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var Delta_theta: J_per_m6 {interface: public};
    var sigma_theta: J_per_m6 {interface: public};
  enddef;

  def comp heart_period_effector as
    var G_Ts: second {interface: public};
    var G_Tv: s2 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Ts: second {interface: public};
    var tau_Tv: second {interface: public};
    var Delta_Ts: second {interface: public};
    var Delta_Tv: second {interface: public};
    var Delta_T: second {interface: public};
    var sigma_Ts: second {interface: public};
    var sigma_Tv: second {interface: public};
  enddef;

  def comp venous_us_volume_effector as
    var G_theta_us: dimensionless {interface: public};
    var G_theta_compliance: dimensionless {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta_us: second {interface: public};
    var tau_theta_compliance: second {interface: public};
    var Delta_theta_us: dimensionless {interface: public};
    var sigma_theta_us: per_s {interface: public};
    var Delta_theta_compliance: dimensionless {interface: public};
    var sigma_theta_compliance: per_s {interface: public};
  enddef;

  def comp par as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var I: Js2_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
  enddef;

  def comp pvn as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var I: Js2_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
  enddef;

  def comp global as
    var rho: Js2_per_m5 {interface: public};
    var T: second {interface: public};
    var T_min: second {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var t_astart: second {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var t_vstart: second {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var l_eff: metre {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var W_cv: dimensionless {interface: public};
    var f_ev_0: per_s {interface: public};
    var f_ev_inf: per_s {interface: public};
    var f_ab_0: per_s {interface: public};
    var theta_v: per_s {interface: public};
    var k_ev: per_s {interface: public};
    var f_es_0: per_s {interface: public};
    var f_es_inf: per_s {interface: public};
    var f_es_max: per_s {interface: public};
    var k_es: second {interface: public};
    var f_es_min: per_s {interface: public};
  enddef;
  def map between parameters and A_thoracic_aorta_C_module for
    vars E_A_thoracic_aorta_C and E;
    vars l_A_thoracic_aorta_C and l;
    vars r_0_A_thoracic_aorta_C and r_0;
    vars u_0_A_thoracic_aorta_C and u_0;
    vars u_ext_A_thoracic_aorta_C and u_ext;
    vars theta_A_thoracic_aorta_C and theta;
  enddef;
  def map between parameters and A_aortic_arch_C_1_module for
    vars E_A_aortic_arch_C_1 and E;
    vars l_A_aortic_arch_C_1 and l;
    vars r_0_A_aortic_arch_C_1 and r_0;
    vars u_0_A_aortic_arch_C_1 and u_0;
    vars theta_A_aortic_arch_C_1 and theta;
    vars u_ext_A_aortic_arch_C_1 and u_ext;
  enddef;
  def map between parameters and A_aortic_arch_C_2_module for
    vars E_A_aortic_arch_C_2 and E;
    vars l_A_aortic_arch_C_2 and l;
    vars r_0_A_aortic_arch_C_2 and r_0;
    vars u_0_A_aortic_arch_C_2 and u_0;
    vars theta_A_aortic_arch_C_2 and theta;
    vars u_ext_A_aortic_arch_C_2 and u_ext;
  enddef;
  def map between parameters and A_aortic_arch_C_3_module for
    vars E_A_aortic_arch_C_3 and E;
    vars l_A_aortic_arch_C_3 and l;
    vars r_0_A_aortic_arch_C_3 and r_0;
    vars u_0_A_aortic_arch_C_3 and u_0;
    vars theta_A_aortic_arch_C_3 and theta;
    vars u_ext_A_aortic_arch_C_3 and u_ext;
  enddef;
  def map between parameters and A_aortic_arch_C_4_module for
    vars E_A_aortic_arch_C_4 and E;
    vars l_A_aortic_arch_C_4 and l;
    vars r_0_A_aortic_arch_C_4 and r_0;
    vars u_0_A_aortic_arch_C_4 and u_0;
    vars u_ext_A_aortic_arch_C_4 and u_ext;
    vars theta_A_aortic_arch_C_4 and theta;
  enddef;
  def map between parameters and A_abdominal_aorta_C_1_module for
    vars E_A_abdominal_aorta_C_1 and E;
    vars l_A_abdominal_aorta_C_1 and l;
    vars r_0_A_abdominal_aorta_C_1 and r_0;
    vars u_0_A_abdominal_aorta_C_1 and u_0;
    vars theta_A_abdominal_aorta_C_1 and theta;
    vars u_ext_A_abdominal_aorta_C_1 and u_ext;
  enddef;
  def map between parameters and A_abdominal_aorta_C_2_module for
    vars E_A_abdominal_aorta_C_2 and E;
    vars l_A_abdominal_aorta_C_2 and l;
    vars r_0_A_abdominal_aorta_C_2 and r_0;
    vars u_0_A_abdominal_aorta_C_2 and u_0;
    vars theta_A_abdominal_aorta_C_2 and theta;
    vars u_ext_A_abdominal_aorta_C_2 and u_ext;
  enddef;
  def map between parameters and A_abdominal_aorta_C_3_module for
    vars E_A_abdominal_aorta_C_3 and E;
    vars l_A_abdominal_aorta_C_3 and l;
    vars r_0_A_abdominal_aorta_C_3 and r_0;
    vars u_0_A_abdominal_aorta_C_3 and u_0;
    vars theta_A_abdominal_aorta_C_3 and theta;
    vars u_ext_A_abdominal_aorta_C_3 and u_ext;
  enddef;
  def map between parameters and A_abdominal_aorta_C_4_module for
    vars E_A_abdominal_aorta_C_4 and E;
    vars l_A_abdominal_aorta_C_4 and l;
    vars r_0_A_abdominal_aorta_C_4 and r_0;
    vars u_0_A_abdominal_aorta_C_4 and u_0;
    vars theta_A_abdominal_aorta_C_4 and theta;
    vars u_ext_A_abdominal_aorta_C_4 and u_ext;
  enddef;
  def map between parameters and A_abdominal_aorta_C_5_module for
    vars E_A_abdominal_aorta_C_5 and E;
    vars l_A_abdominal_aorta_C_5 and l;
    vars r_0_A_abdominal_aorta_C_5 and r_0;
    vars u_0_A_abdominal_aorta_C_5 and u_0;
    vars theta_A_abdominal_aorta_C_5 and theta;
    vars u_ext_A_abdominal_aorta_C_5 and u_ext;
  enddef;
  def map between parameters and A_abdominal_aorta_C_6_module for
    vars E_A_abdominal_aorta_C_6 and E;
    vars l_A_abdominal_aorta_C_6 and l;
    vars r_0_A_abdominal_aorta_C_6 and r_0;
    vars u_0_A_abdominal_aorta_C_6 and u_0;
    vars theta_A_abdominal_aorta_C_6 and theta;
    vars u_ext_A_abdominal_aorta_C_6 and u_ext;
  enddef;
  def map between parameters and A_brachiocephalic_trunk_C_module for
    vars E_A_brachiocephalic_trunk_C and E;
    vars l_A_brachiocephalic_trunk_C and l;
    vars r_0_A_brachiocephalic_trunk_C and r_0;
    vars u_0_A_brachiocephalic_trunk_C and u_0;
    vars theta_A_brachiocephalic_trunk_C and theta;
    vars u_ext_A_brachiocephalic_trunk_C and u_ext;
  enddef;
  def map between parameters and A_common_carotida_L_module for
    vars E_A_common_carotida_L and E;
    vars l_A_common_carotida_L and l;
    vars r_0_A_common_carotida_L and r_0;
    vars u_0_A_common_carotida_L and u_0;
    vars theta_A_common_carotida_L and theta;
    vars u_ext_A_common_carotida_L and u_ext;
  enddef;
  def map between parameters and A_subclavian_L_1_module for
    vars E_A_subclavian_L_1 and E;
    vars l_A_subclavian_L_1 and l;
    vars r_0_A_subclavian_L_1 and r_0;
    vars u_0_A_subclavian_L_1 and u_0;
    vars theta_A_subclavian_L_1 and theta;
    vars u_ext_A_subclavian_L_1 and u_ext;
  enddef;
  def map between parameters and A_celiac_trunk_C_1_module for
    vars E_A_celiac_trunk_C_1 and E;
    vars l_A_celiac_trunk_C_1 and l;
    vars r_0_A_celiac_trunk_C_1 and r_0;
    vars u_0_A_celiac_trunk_C_1 and u_0;
    vars theta_A_celiac_trunk_C_1 and theta;
    vars u_ext_A_celiac_trunk_C_1 and u_ext;
  enddef;
  def map between parameters and A_celiac_trunk_C_2_module for
    vars E_A_celiac_trunk_C_2 and E;
    vars l_A_celiac_trunk_C_2 and l;
    vars r_0_A_celiac_trunk_C_2 and r_0;
    vars u_0_A_celiac_trunk_C_2 and u_0;
    vars theta_A_celiac_trunk_C_2 and theta;
    vars u_ext_A_celiac_trunk_C_2 and u_ext;
  enddef;
  def map between parameters and A_left_gastric_C_module for
    vars E_A_left_gastric_C and E;
    vars l_A_left_gastric_C and l;
    vars r_0_A_left_gastric_C and r_0;
    vars u_0_A_left_gastric_C and u_0;
    vars u_ext_A_left_gastric_C and u_ext;
    vars theta_A_left_gastric_C and theta;
  enddef;
  def map between parameters and A_common_hepatic_C_module for
    vars E_A_common_hepatic_C and E;
    vars l_A_common_hepatic_C and l;
    vars r_0_A_common_hepatic_C and r_0;
    vars u_0_A_common_hepatic_C and u_0;
    vars u_ext_A_common_hepatic_C and u_ext;
    vars theta_A_common_hepatic_C and theta;
  enddef;
  def map between parameters and A_splenic_C_module for
    vars E_A_splenic_C and E;
    vars l_A_splenic_C and l;
    vars r_0_A_splenic_C and r_0;
    vars u_0_A_splenic_C and u_0;
    vars u_ext_A_splenic_C and u_ext;
    vars theta_A_splenic_C and theta;
  enddef;
  def map between parameters and A_superior_mesenteric_C_module for
    vars E_A_superior_mesenteric_C and E;
    vars l_A_superior_mesenteric_C and l;
    vars r_0_A_superior_mesenteric_C and r_0;
    vars u_0_A_superior_mesenteric_C and u_0;
    vars u_ext_A_superior_mesenteric_C and u_ext;
    vars theta_A_superior_mesenteric_C and theta;
  enddef;
  def map between parameters and A_renal_L_module for
    vars E_A_renal_L and E;
    vars l_A_renal_L and l;
    vars r_0_A_renal_L and r_0;
    vars u_0_A_renal_L and u_0;
    vars u_ext_A_renal_L and u_ext;
    vars theta_A_renal_L and theta;
  enddef;
  def map between parameters and A_renal_R_module for
    vars E_A_renal_R and E;
    vars l_A_renal_R and l;
    vars r_0_A_renal_R and r_0;
    vars u_0_A_renal_R and u_0;
    vars u_ext_A_renal_R and u_ext;
    vars theta_A_renal_R and theta;
  enddef;
  def map between parameters and A_inferior_mesenteric_C_module for
    vars E_A_inferior_mesenteric_C and E;
    vars l_A_inferior_mesenteric_C and l;
    vars r_0_A_inferior_mesenteric_C and r_0;
    vars u_0_A_inferior_mesenteric_C and u_0;
    vars u_ext_A_inferior_mesenteric_C and u_ext;
    vars theta_A_inferior_mesenteric_C and theta;
  enddef;
  def map between parameters and A_common_iliac_L_module for
    vars E_A_common_iliac_L and E;
    vars l_A_common_iliac_L and l;
    vars r_0_A_common_iliac_L and r_0;
    vars u_0_A_common_iliac_L and u_0;
    vars theta_A_common_iliac_L and theta;
    vars u_ext_A_common_iliac_L and u_ext;
  enddef;
  def map between parameters and A_common_iliac_R_module for
    vars E_A_common_iliac_R and E;
    vars l_A_common_iliac_R and l;
    vars r_0_A_common_iliac_R and r_0;
    vars u_0_A_common_iliac_R and u_0;
    vars theta_A_common_iliac_R and theta;
    vars u_ext_A_common_iliac_R and u_ext;
  enddef;
  def map between parameters and A_subclavian_R_1_module for
    vars E_A_subclavian_R_1 and E;
    vars l_A_subclavian_R_1 and l;
    vars r_0_A_subclavian_R_1 and r_0;
    vars u_0_A_subclavian_R_1 and u_0;
    vars theta_A_subclavian_R_1 and theta;
    vars u_ext_A_subclavian_R_1 and u_ext;
  enddef;
  def map between parameters and A_common_carotida_R_module for
    vars E_A_common_carotida_R and E;
    vars l_A_common_carotida_R and l;
    vars r_0_A_common_carotida_R and r_0;
    vars u_0_A_common_carotida_R and u_0;
    vars theta_A_common_carotida_R and theta;
    vars u_ext_A_common_carotida_R and u_ext;
  enddef;
  def map between parameters and A_subclavian_L_2_module for
    vars E_A_subclavian_L_2 and E;
    vars l_A_subclavian_L_2 and l;
    vars r_0_A_subclavian_L_2 and r_0;
    vars u_0_A_subclavian_L_2 and u_0;
    vars u_ext_A_subclavian_L_2 and u_ext;
    vars theta_A_subclavian_L_2 and theta;
  enddef;
  def map between parameters and A_vertebral_L_1_module for
    vars E_A_vertebral_L_1 and E;
    vars l_A_vertebral_L_1 and l;
    vars r_0_A_vertebral_L_1 and r_0;
    vars u_0_A_vertebral_L_1 and u_0;
    vars theta_A_vertebral_L_1 and theta;
    vars u_ext_A_vertebral_L_1 and u_ext;
  enddef;
  def map between parameters and A_external_iliac_L_module for
    vars E_A_external_iliac_L and E;
    vars l_A_external_iliac_L and l;
    vars r_0_A_external_iliac_L and r_0;
    vars u_0_A_external_iliac_L and u_0;
    vars u_ext_A_external_iliac_L and u_ext;
    vars theta_A_external_iliac_L and theta;
  enddef;
  def map between parameters and A_internal_iliac_L_module for
    vars E_A_internal_iliac_L and E;
    vars l_A_internal_iliac_L and l;
    vars r_0_A_internal_iliac_L and r_0;
    vars u_0_A_internal_iliac_L and u_0;
    vars u_ext_A_internal_iliac_L and u_ext;
    vars theta_A_internal_iliac_L and theta;
  enddef;
  def map between parameters and A_external_iliac_R_module for
    vars E_A_external_iliac_R and E;
    vars l_A_external_iliac_R and l;
    vars r_0_A_external_iliac_R and r_0;
    vars u_0_A_external_iliac_R and u_0;
    vars u_ext_A_external_iliac_R and u_ext;
    vars theta_A_external_iliac_R and theta;
  enddef;
  def map between parameters and A_internal_iliac_R_module for
    vars E_A_internal_iliac_R and E;
    vars l_A_internal_iliac_R and l;
    vars r_0_A_internal_iliac_R and r_0;
    vars u_0_A_internal_iliac_R and u_0;
    vars u_ext_A_internal_iliac_R and u_ext;
    vars theta_A_internal_iliac_R and theta;
  enddef;
  def map between parameters and A_subclavian_R_2_module for
    vars E_A_subclavian_R_2 and E;
    vars l_A_subclavian_R_2 and l;
    vars r_0_A_subclavian_R_2 and r_0;
    vars u_0_A_subclavian_R_2 and u_0;
    vars u_ext_A_subclavian_R_2 and u_ext;
    vars theta_A_subclavian_R_2 and theta;
  enddef;
  def map between parameters and A_vertebral_R_1_module for
    vars E_A_vertebral_R_1 and E;
    vars l_A_vertebral_R_1 and l;
    vars r_0_A_vertebral_R_1 and r_0;
    vars u_0_A_vertebral_R_1 and u_0;
    vars theta_A_vertebral_R_1 and theta;
    vars u_ext_A_vertebral_R_1 and u_ext;
  enddef;
  def map between parameters and A_femoral_L_1_module for
    vars E_A_femoral_L_1 and E;
    vars l_A_femoral_L_1 and l;
    vars r_0_A_femoral_L_1 and r_0;
    vars u_0_A_femoral_L_1 and u_0;
    vars theta_A_femoral_L_1 and theta;
    vars u_ext_A_femoral_L_1 and u_ext;
  enddef;
  def map between parameters and A_femoral_R_1_module for
    vars E_A_femoral_R_1 and E;
    vars l_A_femoral_R_1 and l;
    vars r_0_A_femoral_R_1 and r_0;
    vars u_0_A_femoral_R_1 and u_0;
    vars theta_A_femoral_R_1 and theta;
    vars u_ext_A_femoral_R_1 and u_ext;
  enddef;
  def map between parameters and A_axillary_L_module for
    vars E_A_axillary_L and E;
    vars l_A_axillary_L and l;
    vars r_0_A_axillary_L and r_0;
    vars u_0_A_axillary_L and u_0;
    vars u_ext_A_axillary_L and u_ext;
    vars theta_A_axillary_L and theta;
  enddef;
  def map between parameters and A_axillary_R_module for
    vars E_A_axillary_R and E;
    vars l_A_axillary_R and l;
    vars r_0_A_axillary_R and r_0;
    vars u_0_A_axillary_R and u_0;
    vars u_ext_A_axillary_R and u_ext;
    vars theta_A_axillary_R and theta;
  enddef;
  def map between parameters and A_brachial_L_module for
    vars E_A_brachial_L and E;
    vars l_A_brachial_L and l;
    vars r_0_A_brachial_L and r_0;
    vars u_0_A_brachial_L and u_0;
    vars theta_A_brachial_L and theta;
    vars u_ext_A_brachial_L and u_ext;
  enddef;
  def map between parameters and A_brachial_R_module for
    vars E_A_brachial_R and E;
    vars l_A_brachial_R and l;
    vars r_0_A_brachial_R and r_0;
    vars u_0_A_brachial_R and u_0;
    vars theta_A_brachial_R and theta;
    vars u_ext_A_brachial_R and u_ext;
  enddef;
  def map between parameters and A_radial_L_module for
    vars E_A_radial_L and E;
    vars l_A_radial_L and l;
    vars r_0_A_radial_L and r_0;
    vars u_0_A_radial_L and u_0;
    vars u_ext_A_radial_L and u_ext;
    vars theta_A_radial_L and theta;
  enddef;
  def map between parameters and A_ulnar_L_module for
    vars E_A_ulnar_L and E;
    vars l_A_ulnar_L and l;
    vars r_0_A_ulnar_L and r_0;
    vars u_0_A_ulnar_L and u_0;
    vars u_ext_A_ulnar_L and u_ext;
    vars theta_A_ulnar_L and theta;
  enddef;
  def map between parameters and A_radial_R_module for
    vars E_A_radial_R and E;
    vars l_A_radial_R and l;
    vars r_0_A_radial_R and r_0;
    vars u_0_A_radial_R and u_0;
    vars u_ext_A_radial_R and u_ext;
    vars theta_A_radial_R and theta;
  enddef;
  def map between parameters and A_ulnar_R_module for
    vars E_A_ulnar_R and E;
    vars l_A_ulnar_R and l;
    vars r_0_A_ulnar_R and r_0;
    vars u_0_A_ulnar_R and u_0;
    vars u_ext_A_ulnar_R and u_ext;
    vars theta_A_ulnar_R and theta;
  enddef;
  def map between parameters and A_profunda_femoris_L_module for
    vars E_A_profunda_femoris_L and E;
    vars l_A_profunda_femoris_L and l;
    vars r_0_A_profunda_femoris_L and r_0;
    vars u_0_A_profunda_femoris_L and u_0;
    vars u_ext_A_profunda_femoris_L and u_ext;
    vars theta_A_profunda_femoris_L and theta;
  enddef;
  def map between parameters and A_femoral_L_2_module for
    vars E_A_femoral_L_2 and E;
    vars l_A_femoral_L_2 and l;
    vars r_0_A_femoral_L_2 and r_0;
    vars u_0_A_femoral_L_2 and u_0;
    vars u_ext_A_femoral_L_2 and u_ext;
    vars theta_A_femoral_L_2 and theta;
  enddef;
  def map between parameters and A_femoral_R_2_module for
    vars E_A_femoral_R_2 and E;
    vars l_A_femoral_R_2 and l;
    vars r_0_A_femoral_R_2 and r_0;
    vars u_0_A_femoral_R_2 and u_0;
    vars u_ext_A_femoral_R_2 and u_ext;
    vars theta_A_femoral_R_2 and theta;
  enddef;
  def map between parameters and A_profunda_femoris_R_module for
    vars E_A_profunda_femoris_R and E;
    vars l_A_profunda_femoris_R and l;
    vars r_0_A_profunda_femoris_R and r_0;
    vars u_0_A_profunda_femoris_R and u_0;
    vars u_ext_A_profunda_femoris_R and u_ext;
    vars theta_A_profunda_femoris_R and theta;
  enddef;
  def map between parameters and A_popliteal_L_1_module for
    vars E_A_popliteal_L_1 and E;
    vars l_A_popliteal_L_1 and l;
    vars r_0_A_popliteal_L_1 and r_0;
    vars u_0_A_popliteal_L_1 and u_0;
    vars theta_A_popliteal_L_1 and theta;
    vars u_ext_A_popliteal_L_1 and u_ext;
  enddef;
  def map between parameters and A_popliteal_R_1_module for
    vars E_A_popliteal_R_1 and E;
    vars l_A_popliteal_R_1 and l;
    vars r_0_A_popliteal_R_1 and r_0;
    vars u_0_A_popliteal_R_1 and u_0;
    vars theta_A_popliteal_R_1 and theta;
    vars u_ext_A_popliteal_R_1 and u_ext;
  enddef;
  def map between parameters and A_popliteal_L_2_module for
    vars E_A_popliteal_L_2 and E;
    vars l_A_popliteal_L_2 and l;
    vars r_0_A_popliteal_L_2 and r_0;
    vars u_0_A_popliteal_L_2 and u_0;
    vars u_ext_A_popliteal_L_2 and u_ext;
    vars theta_A_popliteal_L_2 and theta;
  enddef;
  def map between parameters and A_anterior_tibial_L_module for
    vars E_A_anterior_tibial_L and E;
    vars l_A_anterior_tibial_L and l;
    vars r_0_A_anterior_tibial_L and r_0;
    vars u_0_A_anterior_tibial_L and u_0;
    vars u_ext_A_anterior_tibial_L and u_ext;
    vars theta_A_anterior_tibial_L and theta;
  enddef;
  def map between parameters and A_popliteal_R_2_module for
    vars E_A_popliteal_R_2 and E;
    vars l_A_popliteal_R_2 and l;
    vars r_0_A_popliteal_R_2 and r_0;
    vars u_0_A_popliteal_R_2 and u_0;
    vars u_ext_A_popliteal_R_2 and u_ext;
    vars theta_A_popliteal_R_2 and theta;
  enddef;
  def map between parameters and A_anterior_tibial_R_module for
    vars E_A_anterior_tibial_R and E;
    vars l_A_anterior_tibial_R and l;
    vars r_0_A_anterior_tibial_R and r_0;
    vars u_0_A_anterior_tibial_R and u_0;
    vars u_ext_A_anterior_tibial_R and u_ext;
    vars theta_A_anterior_tibial_R and theta;
  enddef;
  def map between parameters and A_tibiofibular_trunk_L_module for
    vars E_A_tibiofibular_trunk_L and E;
    vars l_A_tibiofibular_trunk_L and l;
    vars r_0_A_tibiofibular_trunk_L and r_0;
    vars u_0_A_tibiofibular_trunk_L and u_0;
    vars theta_A_tibiofibular_trunk_L and theta;
    vars u_ext_A_tibiofibular_trunk_L and u_ext;
  enddef;
  def map between parameters and A_tibiofibular_trunk_R_module for
    vars E_A_tibiofibular_trunk_R and E;
    vars l_A_tibiofibular_trunk_R and l;
    vars r_0_A_tibiofibular_trunk_R and r_0;
    vars u_0_A_tibiofibular_trunk_R and u_0;
    vars theta_A_tibiofibular_trunk_R and theta;
    vars u_ext_A_tibiofibular_trunk_R and u_ext;
  enddef;
  def map between parameters and A_posterior_tibial_L_module for
    vars E_A_posterior_tibial_L and E;
    vars l_A_posterior_tibial_L and l;
    vars r_0_A_posterior_tibial_L and r_0;
    vars u_0_A_posterior_tibial_L and u_0;
    vars u_ext_A_posterior_tibial_L and u_ext;
    vars theta_A_posterior_tibial_L and theta;
  enddef;
  def map between parameters and A_fibular_L_module for
    vars E_A_fibular_L and E;
    vars l_A_fibular_L and l;
    vars r_0_A_fibular_L and r_0;
    vars u_0_A_fibular_L and u_0;
    vars u_ext_A_fibular_L and u_ext;
    vars theta_A_fibular_L and theta;
  enddef;
  def map between parameters and A_fibular_R_module for
    vars E_A_fibular_R and E;
    vars l_A_fibular_R and l;
    vars r_0_A_fibular_R and r_0;
    vars u_0_A_fibular_R and u_0;
    vars u_ext_A_fibular_R and u_ext;
    vars theta_A_fibular_R and theta;
  enddef;
  def map between parameters and A_posterior_tibial_R_module for
    vars E_A_posterior_tibial_R and E;
    vars l_A_posterior_tibial_R and l;
    vars r_0_A_posterior_tibial_R and r_0;
    vars u_0_A_posterior_tibial_R and u_0;
    vars u_ext_A_posterior_tibial_R and u_ext;
    vars theta_A_posterior_tibial_R and theta;
  enddef;
  def map between parameters and A_external_carotid_L_module for
    vars E_A_external_carotid_L and E;
    vars l_A_external_carotid_L and l;
    vars r_0_A_external_carotid_L and r_0;
    vars u_0_A_external_carotid_L and u_0;
    vars u_ext_A_external_carotid_L and u_ext;
    vars theta_A_external_carotid_L and theta;
  enddef;
  def map between parameters and A_external_carotid_R_module for
    vars E_A_external_carotid_R and E;
    vars l_A_external_carotid_R and l;
    vars r_0_A_external_carotid_R and r_0;
    vars u_0_A_external_carotid_R and u_0;
    vars u_ext_A_external_carotid_R and u_ext;
    vars theta_A_external_carotid_R and theta;
  enddef;
  def map between parameters and A_vertebral_R_2_module for
    vars E_A_vertebral_R_2 and E;
    vars l_A_vertebral_R_2 and l;
    vars r_0_A_vertebral_R_2 and r_0;
    vars u_0_A_vertebral_R_2 and u_0;
    vars u_ext_A_vertebral_R_2 and u_ext;
    vars theta_A_vertebral_R_2 and theta;
  enddef;
  def map between parameters and A_posterior_inferior_cerebellar_R_module for
    vars E_A_posterior_inferior_cerebellar_R and E;
    vars l_A_posterior_inferior_cerebellar_R and l;
    vars r_0_A_posterior_inferior_cerebellar_R and r_0;
    vars u_0_A_posterior_inferior_cerebellar_R and u_0;
    vars u_ext_A_posterior_inferior_cerebellar_R and u_ext;
    vars theta_A_posterior_inferior_cerebellar_R and theta;
  enddef;
  def map between parameters and A_posterior_inferior_cerebellar_L_module for
    vars E_A_posterior_inferior_cerebellar_L and E;
    vars l_A_posterior_inferior_cerebellar_L and l;
    vars r_0_A_posterior_inferior_cerebellar_L and r_0;
    vars u_0_A_posterior_inferior_cerebellar_L and u_0;
    vars u_ext_A_posterior_inferior_cerebellar_L and u_ext;
    vars theta_A_posterior_inferior_cerebellar_L and theta;
  enddef;
  def map between parameters and A_vertebral_L_2_module for
    vars E_A_vertebral_L_2 and E;
    vars l_A_vertebral_L_2 and l;
    vars r_0_A_vertebral_L_2 and r_0;
    vars u_0_A_vertebral_L_2 and u_0;
    vars u_ext_A_vertebral_L_2 and u_ext;
    vars theta_A_vertebral_L_2 and theta;
  enddef;
  def map between parameters and A_basilar_C_5_module for
    vars E_A_basilar_C_5 and E;
    vars l_A_basilar_C_5 and l;
    vars r_0_A_basilar_C_5 and r_0;
    vars u_0_A_basilar_C_5 and u_0;
    vars theta_A_basilar_C_5 and theta;
    vars u_ext_A_basilar_C_5 and u_ext;
  enddef;
  def map between parameters and A_internal_carotid_L_2_module for
    vars E_A_internal_carotid_L_2 and E;
    vars l_A_internal_carotid_L_2 and l;
    vars r_0_A_internal_carotid_L_2 and r_0;
    vars u_0_A_internal_carotid_L_2 and u_0;
    vars theta_A_internal_carotid_L_2 and theta;
    vars u_ext_A_internal_carotid_L_2 and u_ext;
  enddef;
  def map between parameters and A_basilar_C_4_module for
    vars E_A_basilar_C_4 and E;
    vars l_A_basilar_C_4 and l;
    vars r_0_A_basilar_C_4 and r_0;
    vars u_0_A_basilar_C_4 and u_0;
    vars theta_A_basilar_C_4 and theta;
    vars u_ext_A_basilar_C_4 and u_ext;
  enddef;
  def map between parameters and A_anterior_inferior_cerebellar_R_module for
    vars E_A_anterior_inferior_cerebellar_R and E;
    vars l_A_anterior_inferior_cerebellar_R and l;
    vars r_0_A_anterior_inferior_cerebellar_R and r_0;
    vars u_0_A_anterior_inferior_cerebellar_R and u_0;
    vars u_ext_A_anterior_inferior_cerebellar_R and u_ext;
    vars theta_A_anterior_inferior_cerebellar_R and theta;
  enddef;
  def map between parameters and A_internal_carotid_R_2_module for
    vars E_A_internal_carotid_R_2 and E;
    vars l_A_internal_carotid_R_2 and l;
    vars r_0_A_internal_carotid_R_2 and r_0;
    vars u_0_A_internal_carotid_R_2 and u_0;
    vars theta_A_internal_carotid_R_2 and theta;
    vars u_ext_A_internal_carotid_R_2 and u_ext;
  enddef;
  def map between parameters and A_posterior_communicating_L_module for
    vars E_A_posterior_communicating_L and E;
    vars l_A_posterior_communicating_L and l;
    vars r_0_A_posterior_communicating_L and r_0;
    vars u_0_A_posterior_communicating_L and u_0;
    vars theta_A_posterior_communicating_L and theta;
    vars u_ext_A_posterior_communicating_L and u_ext;
  enddef;
  def map between parameters and A_internal_carotid_L_1_module for
    vars E_A_internal_carotid_L_1 and E;
    vars l_A_internal_carotid_L_1 and l;
    vars r_0_A_internal_carotid_L_1 and r_0;
    vars u_0_A_internal_carotid_L_1 and u_0;
    vars theta_A_internal_carotid_L_1 and theta;
    vars u_ext_A_internal_carotid_L_1 and u_ext;
  enddef;
  def map between parameters and A_anterior_inferior_cerebellar_L_module for
    vars E_A_anterior_inferior_cerebellar_L and E;
    vars l_A_anterior_inferior_cerebellar_L and l;
    vars r_0_A_anterior_inferior_cerebellar_L and r_0;
    vars u_0_A_anterior_inferior_cerebellar_L and u_0;
    vars u_ext_A_anterior_inferior_cerebellar_L and u_ext;
    vars theta_A_anterior_inferior_cerebellar_L and theta;
  enddef;
  def map between parameters and A_internal_carotid_R_1_module for
    vars E_A_internal_carotid_R_1 and E;
    vars l_A_internal_carotid_R_1 and l;
    vars r_0_A_internal_carotid_R_1 and r_0;
    vars u_0_A_internal_carotid_R_1 and u_0;
    vars theta_A_internal_carotid_R_1 and theta;
    vars u_ext_A_internal_carotid_R_1 and u_ext;
  enddef;
  def map between parameters and A_posterior_communicating_R_module for
    vars E_A_posterior_communicating_R and E;
    vars l_A_posterior_communicating_R and l;
    vars r_0_A_posterior_communicating_R and r_0;
    vars u_0_A_posterior_communicating_R and u_0;
    vars theta_A_posterior_communicating_R and theta;
    vars u_ext_A_posterior_communicating_R and u_ext;
  enddef;
  def map between parameters and A_anterior_cerebral_L_1_module for
    vars E_A_anterior_cerebral_L_1 and E;
    vars l_A_anterior_cerebral_L_1 and l;
    vars r_0_A_anterior_cerebral_L_1 and r_0;
    vars u_0_A_anterior_cerebral_L_1 and u_0;
    vars u_ext_A_anterior_cerebral_L_1 and u_ext;
    vars theta_A_anterior_cerebral_L_1 and theta;
  enddef;
  def map between parameters and A_anterior_cerebral_R_1_module for
    vars E_A_anterior_cerebral_R_1 and E;
    vars l_A_anterior_cerebral_R_1 and l;
    vars r_0_A_anterior_cerebral_R_1 and r_0;
    vars u_0_A_anterior_cerebral_R_1 and u_0;
    vars theta_A_anterior_cerebral_R_1 and theta;
    vars u_ext_A_anterior_cerebral_R_1 and u_ext;
  enddef;
  def map between parameters and A_basilar_C_3_module for
    vars E_A_basilar_C_3 and E;
    vars l_A_basilar_C_3 and l;
    vars r_0_A_basilar_C_3 and r_0;
    vars u_0_A_basilar_C_3 and u_0;
    vars theta_A_basilar_C_3 and theta;
    vars u_ext_A_basilar_C_3 and u_ext;
  enddef;
  def map between parameters and A_superior_cerebellar_L_module for
    vars E_A_superior_cerebellar_L and E;
    vars l_A_superior_cerebellar_L and l;
    vars r_0_A_superior_cerebellar_L and r_0;
    vars u_0_A_superior_cerebellar_L and u_0;
    vars u_ext_A_superior_cerebellar_L and u_ext;
    vars theta_A_superior_cerebellar_L and theta;
  enddef;
  def map between parameters and A_basilar_C_2_module for
    vars E_A_basilar_C_2 and E;
    vars l_A_basilar_C_2 and l;
    vars r_0_A_basilar_C_2 and r_0;
    vars u_0_A_basilar_C_2 and u_0;
    vars u_ext_A_basilar_C_2 and u_ext;
    vars theta_A_basilar_C_2 and theta;
  enddef;
  def map between parameters and A_middle_cerebral_L_module for
    vars E_A_middle_cerebral_L and E;
    vars l_A_middle_cerebral_L and l;
    vars r_0_A_middle_cerebral_L and r_0;
    vars u_0_A_middle_cerebral_L and u_0;
    vars u_ext_A_middle_cerebral_L and u_ext;
    vars theta_A_middle_cerebral_L and theta;
  enddef;
  def map between parameters and A_basilar_C_1_module for
    vars E_A_basilar_C_1 and E;
    vars l_A_basilar_C_1 and l;
    vars r_0_A_basilar_C_1 and r_0;
    vars u_0_A_basilar_C_1 and u_0;
    vars theta_A_basilar_C_1 and theta;
    vars u_ext_A_basilar_C_1 and u_ext;
  enddef;
  def map between parameters and A_superior_cerebellar_R_module for
    vars E_A_superior_cerebellar_R and E;
    vars l_A_superior_cerebellar_R and l;
    vars r_0_A_superior_cerebellar_R and r_0;
    vars u_0_A_superior_cerebellar_R and u_0;
    vars u_ext_A_superior_cerebellar_R and u_ext;
    vars theta_A_superior_cerebellar_R and theta;
  enddef;
  def map between parameters and A_middle_cerebral_R_module for
    vars E_A_middle_cerebral_R and E;
    vars l_A_middle_cerebral_R and l;
    vars r_0_A_middle_cerebral_R and r_0;
    vars u_0_A_middle_cerebral_R and u_0;
    vars u_ext_A_middle_cerebral_R and u_ext;
    vars theta_A_middle_cerebral_R and theta;
  enddef;
  def map between parameters and A_posterior_cerebral_postcommunicating_part_L_module for
    vars E_A_posterior_cerebral_postcommunicating_part_L and E;
    vars l_A_posterior_cerebral_postcommunicating_part_L and l;
    vars r_0_A_posterior_cerebral_postcommunicating_part_L and r_0;
    vars u_0_A_posterior_cerebral_postcommunicating_part_L and u_0;
    vars u_ext_A_posterior_cerebral_postcommunicating_part_L and u_ext;
    vars theta_A_posterior_cerebral_postcommunicating_part_L and theta;
  enddef;
  def map between parameters and A_posterior_cerebral_precommunicating_part_L_module for
    vars E_A_posterior_cerebral_precommunicating_part_L and E;
    vars l_A_posterior_cerebral_precommunicating_part_L and l;
    vars r_0_A_posterior_cerebral_precommunicating_part_L and r_0;
    vars u_0_A_posterior_cerebral_precommunicating_part_L and u_0;
    vars u_ext_A_posterior_cerebral_precommunicating_part_L and u_ext;
    vars theta_A_posterior_cerebral_precommunicating_part_L and theta;
  enddef;
  def map between parameters and A_posterior_cerebral_precommunicating_part_R_module for
    vars E_A_posterior_cerebral_precommunicating_part_R and E;
    vars l_A_posterior_cerebral_precommunicating_part_R and l;
    vars r_0_A_posterior_cerebral_precommunicating_part_R and r_0;
    vars u_0_A_posterior_cerebral_precommunicating_part_R and u_0;
    vars u_ext_A_posterior_cerebral_precommunicating_part_R and u_ext;
    vars theta_A_posterior_cerebral_precommunicating_part_R and theta;
  enddef;
  def map between parameters and A_posterior_cerebral_postcommunicating_part_R_module for
    vars E_A_posterior_cerebral_postcommunicating_part_R and E;
    vars l_A_posterior_cerebral_postcommunicating_part_R and l;
    vars r_0_A_posterior_cerebral_postcommunicating_part_R and r_0;
    vars u_0_A_posterior_cerebral_postcommunicating_part_R and u_0;
    vars u_ext_A_posterior_cerebral_postcommunicating_part_R and u_ext;
    vars theta_A_posterior_cerebral_postcommunicating_part_R and theta;
  enddef;
  def map between parameters and A_anterior_cerebral_L_2_module for
    vars E_A_anterior_cerebral_L_2 and E;
    vars l_A_anterior_cerebral_L_2 and l;
    vars r_0_A_anterior_cerebral_L_2 and r_0;
    vars u_0_A_anterior_cerebral_L_2 and u_0;
    vars u_ext_A_anterior_cerebral_L_2 and u_ext;
    vars theta_A_anterior_cerebral_L_2 and theta;
  enddef;
  def map between parameters and A_anterior_communicating_C_module for
    vars E_A_anterior_communicating_C and E;
    vars l_A_anterior_communicating_C and l;
    vars r_0_A_anterior_communicating_C and r_0;
    vars u_0_A_anterior_communicating_C and u_0;
    vars u_ext_A_anterior_communicating_C and u_ext;
    vars theta_A_anterior_communicating_C and theta;
  enddef;
  def map between parameters and A_anterior_cerebral_R_2_module for
    vars E_A_anterior_cerebral_R_2 and E;
    vars l_A_anterior_cerebral_R_2 and l;
    vars r_0_A_anterior_cerebral_R_2 and r_0;
    vars u_0_A_anterior_cerebral_R_2 and u_0;
    vars u_ext_A_anterior_cerebral_R_2 and u_ext;
    vars theta_A_anterior_cerebral_R_2 and theta;
  enddef;
  def map between parameters and A_left_gastric_C_T_module for
    vars R_T_A_left_gastric_C_T and R_T;
    vars C_T_A_left_gastric_C_T and C_T;
    vars I_T_A_left_gastric_C_T and I_T;
    vars q_us_A_left_gastric_C_T and q_us;
    vars q_init_A_left_gastric_C_T and q_init;
    vars u_ext_A_left_gastric_C_T and u_ext;
    vars R_local_multiplier_A_left_gastric_C_T and R_local_multiplier;
  enddef;
  def map between parameters and A_common_hepatic_C_T_module for
    vars R_T_A_common_hepatic_C_T and R_T;
    vars C_T_A_common_hepatic_C_T and C_T;
    vars I_T_A_common_hepatic_C_T and I_T;
    vars q_us_A_common_hepatic_C_T and q_us;
    vars q_init_A_common_hepatic_C_T and q_init;
    vars u_ext_A_common_hepatic_C_T and u_ext;
    vars R_local_multiplier_A_common_hepatic_C_T and R_local_multiplier;
  enddef;
  def map between parameters and A_splenic_C_T_module for
    vars R_T_A_splenic_C_T and R_T;
    vars C_T_A_splenic_C_T and C_T;
    vars I_T_A_splenic_C_T and I_T;
    vars q_us_A_splenic_C_T and q_us;
    vars q_init_A_splenic_C_T and q_init;
    vars u_ext_A_splenic_C_T and u_ext;
    vars R_local_multiplier_A_splenic_C_T and R_local_multiplier;
  enddef;
  def map between parameters and A_superior_mesenteric_C_T_module for
    vars R_T_A_superior_mesenteric_C_T and R_T;
    vars C_T_A_superior_mesenteric_C_T and C_T;
    vars I_T_A_superior_mesenteric_C_T and I_T;
    vars q_us_A_superior_mesenteric_C_T and q_us;
    vars q_init_A_superior_mesenteric_C_T and q_init;
    vars u_ext_A_superior_mesenteric_C_T and u_ext;
    vars R_local_multiplier_A_superior_mesenteric_C_T and R_local_multiplier;
  enddef;
  def map between parameters and A_renal_L_T_module for
    vars R_T_A_renal_L_T and R_T;
    vars C_T_A_renal_L_T and C_T;
    vars I_T_A_renal_L_T and I_T;
    vars q_us_A_renal_L_T and q_us;
    vars q_init_A_renal_L_T and q_init;
    vars u_ext_A_renal_L_T and u_ext;
    vars R_local_multiplier_A_renal_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_renal_R_T_module for
    vars R_T_A_renal_R_T and R_T;
    vars C_T_A_renal_R_T and C_T;
    vars I_T_A_renal_R_T and I_T;
    vars q_us_A_renal_R_T and q_us;
    vars q_init_A_renal_R_T and q_init;
    vars u_ext_A_renal_R_T and u_ext;
    vars R_local_multiplier_A_renal_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_inferior_mesenteric_C_T_module for
    vars R_T_A_inferior_mesenteric_C_T and R_T;
    vars C_T_A_inferior_mesenteric_C_T and C_T;
    vars I_T_A_inferior_mesenteric_C_T and I_T;
    vars q_us_A_inferior_mesenteric_C_T and q_us;
    vars q_init_A_inferior_mesenteric_C_T and q_init;
    vars u_ext_A_inferior_mesenteric_C_T and u_ext;
    vars R_local_multiplier_A_inferior_mesenteric_C_T and R_local_multiplier;
  enddef;
  def map between parameters and A_radial_L_T_module for
    vars R_T_A_radial_L_T and R_T;
    vars C_T_A_radial_L_T and C_T;
    vars I_T_A_radial_L_T and I_T;
    vars q_us_A_radial_L_T and q_us;
    vars q_init_A_radial_L_T and q_init;
    vars u_ext_A_radial_L_T and u_ext;
    vars R_local_multiplier_A_radial_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_ulnar_L_T_module for
    vars R_T_A_ulnar_L_T and R_T;
    vars C_T_A_ulnar_L_T and C_T;
    vars I_T_A_ulnar_L_T and I_T;
    vars q_us_A_ulnar_L_T and q_us;
    vars q_init_A_ulnar_L_T and q_init;
    vars u_ext_A_ulnar_L_T and u_ext;
    vars R_local_multiplier_A_ulnar_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_radial_R_T_module for
    vars R_T_A_radial_R_T and R_T;
    vars C_T_A_radial_R_T and C_T;
    vars I_T_A_radial_R_T and I_T;
    vars q_us_A_radial_R_T and q_us;
    vars q_init_A_radial_R_T and q_init;
    vars u_ext_A_radial_R_T and u_ext;
    vars R_local_multiplier_A_radial_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_ulnar_R_T_module for
    vars R_T_A_ulnar_R_T and R_T;
    vars C_T_A_ulnar_R_T and C_T;
    vars I_T_A_ulnar_R_T and I_T;
    vars q_us_A_ulnar_R_T and q_us;
    vars q_init_A_ulnar_R_T and q_init;
    vars u_ext_A_ulnar_R_T and u_ext;
    vars R_local_multiplier_A_ulnar_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_internal_iliac_L_T_module for
    vars R_T_A_internal_iliac_L_T and R_T;
    vars C_T_A_internal_iliac_L_T and C_T;
    vars I_T_A_internal_iliac_L_T and I_T;
    vars q_us_A_internal_iliac_L_T and q_us;
    vars q_init_A_internal_iliac_L_T and q_init;
    vars u_ext_A_internal_iliac_L_T and u_ext;
    vars R_local_multiplier_A_internal_iliac_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_internal_iliac_R_T_module for
    vars R_T_A_internal_iliac_R_T and R_T;
    vars C_T_A_internal_iliac_R_T and C_T;
    vars I_T_A_internal_iliac_R_T and I_T;
    vars q_us_A_internal_iliac_R_T and q_us;
    vars q_init_A_internal_iliac_R_T and q_init;
    vars u_ext_A_internal_iliac_R_T and u_ext;
    vars R_local_multiplier_A_internal_iliac_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_profunda_femoris_L_T_module for
    vars R_T_A_profunda_femoris_L_T and R_T;
    vars C_T_A_profunda_femoris_L_T and C_T;
    vars I_T_A_profunda_femoris_L_T and I_T;
    vars q_us_A_profunda_femoris_L_T and q_us;
    vars q_init_A_profunda_femoris_L_T and q_init;
    vars u_ext_A_profunda_femoris_L_T and u_ext;
    vars R_local_multiplier_A_profunda_femoris_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_profunda_femoris_R_T_module for
    vars R_T_A_profunda_femoris_R_T and R_T;
    vars C_T_A_profunda_femoris_R_T and C_T;
    vars I_T_A_profunda_femoris_R_T and I_T;
    vars q_us_A_profunda_femoris_R_T and q_us;
    vars q_init_A_profunda_femoris_R_T and q_init;
    vars u_ext_A_profunda_femoris_R_T and u_ext;
    vars R_local_multiplier_A_profunda_femoris_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_anterior_tibial_L_T_module for
    vars R_T_A_anterior_tibial_L_T and R_T;
    vars C_T_A_anterior_tibial_L_T and C_T;
    vars I_T_A_anterior_tibial_L_T and I_T;
    vars q_us_A_anterior_tibial_L_T and q_us;
    vars q_init_A_anterior_tibial_L_T and q_init;
    vars u_ext_A_anterior_tibial_L_T and u_ext;
    vars R_local_multiplier_A_anterior_tibial_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_anterior_tibial_R_T_module for
    vars R_T_A_anterior_tibial_R_T and R_T;
    vars C_T_A_anterior_tibial_R_T and C_T;
    vars I_T_A_anterior_tibial_R_T and I_T;
    vars q_us_A_anterior_tibial_R_T and q_us;
    vars q_init_A_anterior_tibial_R_T and q_init;
    vars u_ext_A_anterior_tibial_R_T and u_ext;
    vars R_local_multiplier_A_anterior_tibial_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_posterior_tibial_L_T_module for
    vars R_T_A_posterior_tibial_L_T and R_T;
    vars C_T_A_posterior_tibial_L_T and C_T;
    vars I_T_A_posterior_tibial_L_T and I_T;
    vars q_us_A_posterior_tibial_L_T and q_us;
    vars q_init_A_posterior_tibial_L_T and q_init;
    vars u_ext_A_posterior_tibial_L_T and u_ext;
    vars R_local_multiplier_A_posterior_tibial_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_fibular_L_T_module for
    vars R_T_A_fibular_L_T and R_T;
    vars C_T_A_fibular_L_T and C_T;
    vars I_T_A_fibular_L_T and I_T;
    vars q_us_A_fibular_L_T and q_us;
    vars q_init_A_fibular_L_T and q_init;
    vars u_ext_A_fibular_L_T and u_ext;
    vars R_local_multiplier_A_fibular_L_T and R_local_multiplier;
  enddef;
  def map between parameters and A_fibular_R_T_module for
    vars R_T_A_fibular_R_T and R_T;
    vars C_T_A_fibular_R_T and C_T;
    vars I_T_A_fibular_R_T and I_T;
    vars q_us_A_fibular_R_T and q_us;
    vars q_init_A_fibular_R_T and q_init;
    vars u_ext_A_fibular_R_T and u_ext;
    vars R_local_multiplier_A_fibular_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_posterior_tibial_R_T_module for
    vars R_T_A_posterior_tibial_R_T and R_T;
    vars C_T_A_posterior_tibial_R_T and C_T;
    vars I_T_A_posterior_tibial_R_T and I_T;
    vars q_us_A_posterior_tibial_R_T and q_us;
    vars q_init_A_posterior_tibial_R_T and q_init;
    vars u_ext_A_posterior_tibial_R_T and u_ext;
    vars R_local_multiplier_A_posterior_tibial_R_T and R_local_multiplier;
  enddef;
  def map between parameters and A_external_carotid_L_T_module for
    vars R_T_A_external_carotid_L_T and R_T;
    vars C_T_A_external_carotid_L_T and C_T;
    vars u_ext_A_external_carotid_L_T and u_ext;
    vars q_us_A_external_carotid_L_T and q_us;
    vars q_init_A_external_carotid_L_T and q_init;
  enddef;
  def map between parameters and A_external_carotid_R_T_module for
    vars R_T_A_external_carotid_R_T and R_T;
    vars C_T_A_external_carotid_R_T and C_T;
    vars u_ext_A_external_carotid_R_T and u_ext;
    vars q_us_A_external_carotid_R_T and q_us;
    vars q_init_A_external_carotid_R_T and q_init;
  enddef;
  def map between parameters and A_posterior_inferior_cerebellar_R_T_module for
    vars R_T_A_posterior_inferior_cerebellar_R_T and R_T;
    vars C_T_A_posterior_inferior_cerebellar_R_T and C_T;
    vars u_ext_A_posterior_inferior_cerebellar_R_T and u_ext;
    vars q_us_A_posterior_inferior_cerebellar_R_T and q_us;
    vars q_init_A_posterior_inferior_cerebellar_R_T and q_init;
  enddef;
  def map between parameters and A_posterior_inferior_cerebellar_L_T_module for
    vars R_T_A_posterior_inferior_cerebellar_L_T and R_T;
    vars C_T_A_posterior_inferior_cerebellar_L_T and C_T;
    vars u_ext_A_posterior_inferior_cerebellar_L_T and u_ext;
    vars q_us_A_posterior_inferior_cerebellar_L_T and q_us;
    vars q_init_A_posterior_inferior_cerebellar_L_T and q_init;
  enddef;
  def map between parameters and A_anterior_inferior_cerebellar_R_T_module for
    vars R_T_A_anterior_inferior_cerebellar_R_T and R_T;
    vars C_T_A_anterior_inferior_cerebellar_R_T and C_T;
    vars u_ext_A_anterior_inferior_cerebellar_R_T and u_ext;
    vars q_us_A_anterior_inferior_cerebellar_R_T and q_us;
    vars q_init_A_anterior_inferior_cerebellar_R_T and q_init;
  enddef;
  def map between parameters and A_anterior_inferior_cerebellar_L_T_module for
    vars R_T_A_anterior_inferior_cerebellar_L_T and R_T;
    vars C_T_A_anterior_inferior_cerebellar_L_T and C_T;
    vars u_ext_A_anterior_inferior_cerebellar_L_T and u_ext;
    vars q_us_A_anterior_inferior_cerebellar_L_T and q_us;
    vars q_init_A_anterior_inferior_cerebellar_L_T and q_init;
  enddef;
  def map between parameters and A_superior_cerebellar_L_T_module for
    vars R_T_A_superior_cerebellar_L_T and R_T;
    vars C_T_A_superior_cerebellar_L_T and C_T;
    vars u_ext_A_superior_cerebellar_L_T and u_ext;
    vars q_us_A_superior_cerebellar_L_T and q_us;
    vars q_init_A_superior_cerebellar_L_T and q_init;
  enddef;
  def map between parameters and A_middle_cerebral_L_T_module for
    vars R_T_A_middle_cerebral_L_T and R_T;
    vars C_T_A_middle_cerebral_L_T and C_T;
    vars u_ext_A_middle_cerebral_L_T and u_ext;
    vars q_us_A_middle_cerebral_L_T and q_us;
    vars q_init_A_middle_cerebral_L_T and q_init;
  enddef;
  def map between parameters and A_superior_cerebellar_R_T_module for
    vars R_T_A_superior_cerebellar_R_T and R_T;
    vars C_T_A_superior_cerebellar_R_T and C_T;
    vars u_ext_A_superior_cerebellar_R_T and u_ext;
    vars q_us_A_superior_cerebellar_R_T and q_us;
    vars q_init_A_superior_cerebellar_R_T and q_init;
  enddef;
  def map between parameters and A_middle_cerebral_R_T_module for
    vars R_T_A_middle_cerebral_R_T and R_T;
    vars C_T_A_middle_cerebral_R_T and C_T;
    vars u_ext_A_middle_cerebral_R_T and u_ext;
    vars q_us_A_middle_cerebral_R_T and q_us;
    vars q_init_A_middle_cerebral_R_T and q_init;
  enddef;
  def map between parameters and A_posterior_cerebral_postcommunicating_part_L_T_module for
    vars R_T_A_posterior_cerebral_postcommunicating_part_L_T and R_T;
    vars C_T_A_posterior_cerebral_postcommunicating_part_L_T and C_T;
    vars u_ext_A_posterior_cerebral_postcommunicating_part_L_T and u_ext;
    vars q_us_A_posterior_cerebral_postcommunicating_part_L_T and q_us;
    vars q_init_A_posterior_cerebral_postcommunicating_part_L_T and q_init;
  enddef;
  def map between parameters and A_posterior_cerebral_postcommunicating_part_R_T_module for
    vars R_T_A_posterior_cerebral_postcommunicating_part_R_T and R_T;
    vars C_T_A_posterior_cerebral_postcommunicating_part_R_T and C_T;
    vars u_ext_A_posterior_cerebral_postcommunicating_part_R_T and u_ext;
    vars q_us_A_posterior_cerebral_postcommunicating_part_R_T and q_us;
    vars q_init_A_posterior_cerebral_postcommunicating_part_R_T and q_init;
  enddef;
  def map between parameters and A_anterior_cerebral_L_2_T_module for
    vars R_T_A_anterior_cerebral_L_2_T and R_T;
    vars C_T_A_anterior_cerebral_L_2_T and C_T;
    vars u_ext_A_anterior_cerebral_L_2_T and u_ext;
    vars q_us_A_anterior_cerebral_L_2_T and q_us;
    vars q_init_A_anterior_cerebral_L_2_T and q_init;
  enddef;
  def map between parameters and A_anterior_cerebral_R_2_T_module for
    vars R_T_A_anterior_cerebral_R_2_T and R_T;
    vars C_T_A_anterior_cerebral_R_2_T and C_T;
    vars u_ext_A_anterior_cerebral_R_2_T and u_ext;
    vars q_us_A_anterior_cerebral_R_2_T and q_us;
    vars q_init_A_anterior_cerebral_R_2_T and q_init;
  enddef;
  def map between parameters and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars u_ext_venous_lb and u_ext;
    vars I_venous_lb and I;
    vars q_C_init_venous_lb and q_C_init;
    vars q_us_0_venous_lb and q_us_0;
  enddef;
  def map between parameters and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars u_ext_venous_ub and u_ext;
    vars I_venous_ub and I;
    vars q_C_init_venous_ub and q_C_init;
    vars q_us_0_venous_ub and q_us_0;
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars u_ext_venous_ivc and u_ext;
    vars I_venous_ivc and I;
    vars q_C_init_venous_ivc and q_C_init;
    vars q_us_0_venous_ivc and q_us_0;
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars u_ext_venous_svc and u_ext;
    vars I_venous_svc and I;
    vars q_C_init_venous_svc and q_C_init;
    vars q_us_0_venous_svc and q_us_0;
  enddef;
  def map between parameters and common_carotida_L_baro_module for
    vars P_baro_init_common_carotida_L_baro and P_baro_init;
    vars P_nom_common_carotida_L_baro and P_nom;
    vars tau_zb_common_carotida_L_baro and tau_zb;
    vars tau_pb_common_carotida_L_baro and tau_pb;
    vars f_ab_min_common_carotida_L_baro and f_ab_min;
    vars f_ab_max_common_carotida_L_baro and f_ab_max;
    vars k_ab_common_carotida_L_baro and k_ab;
  enddef;
  def map between parameters and vagal_efferent_module for
    vars f_apc_vagal_efferent and f_apc;
  enddef;
  def map between parameters and sympathetic_efferent_module for
    vars W_bs_sympathetic_efferent and W_bs;
    vars W_cs_sympathetic_efferent and W_cs;
    vars f_apc_sympathetic_efferent and f_apc;
  enddef;
  def map between parameters and trunk_resistance_effector_module for
    vars G_theta_trunk_resistance_effector and G_theta;
    vars tau_theta_trunk_resistance_effector and tau_theta;
  enddef;
  def map between parameters and arm_leg_resistance_effector_module for
    vars G_theta_arm_leg_resistance_effector and G_theta;
    vars tau_theta_arm_leg_resistance_effector and tau_theta;
  enddef;
  def map between parameters and lv_elastance_effector_module for
    vars G_theta_lv_elastance_effector and G_theta;
    vars tau_theta_lv_elastance_effector and tau_theta;
  enddef;
  def map between parameters and rv_elastance_effector_module for
    vars G_theta_rv_elastance_effector and G_theta;
    vars tau_theta_rv_elastance_effector and tau_theta;
  enddef;
  def map between parameters and heart_period_effector_module for
    vars G_Ts_heart_period_effector and G_Ts;
    vars G_Tv_heart_period_effector and G_Tv;
    vars tau_Ts_heart_period_effector and tau_Ts;
    vars tau_Tv_heart_period_effector and tau_Tv;
  enddef;
  def map between parameters and venous_us_volume_effector_module for
    vars G_theta_us_venous_us_volume_effector and G_theta_us;
    vars G_theta_compliance_venous_us_volume_effector and G_theta_compliance;
    vars tau_theta_us_venous_us_volume_effector and tau_theta_us;
    vars tau_theta_compliance_venous_us_volume_effector and tau_theta_compliance;
  enddef;
  def map between parameters and par_module for
    vars q_0_par and q_0;
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
    vars u_ext_par and u_ext;
    vars u_0_par and u_0;
  enddef;
  def map between parameters and pvn_module for
    vars q_0_pvn and q_0;
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
    vars u_ext_pvn and u_ext;
    vars u_0_pvn and u_0;
  enddef;
  def map between parameters_global and global for
    vars rho and rho;
    vars T and T;
    vars T_min and T_min;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
    vars W_cv and W_cv;
    vars f_ev_0 and f_ev_0;
    vars f_ev_inf and f_ev_inf;
    vars f_ab_0 and f_ab_0;
    vars theta_v and theta_v;
    vars k_ev and k_ev;
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars T_min and T_min;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters_global and A_thoracic_aorta_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_aortic_arch_C_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_aortic_arch_C_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_aortic_arch_C_3_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_aortic_arch_C_4_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_abdominal_aorta_C_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_abdominal_aorta_C_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_abdominal_aorta_C_3_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_abdominal_aorta_C_4_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_abdominal_aorta_C_5_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_abdominal_aorta_C_6_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_brachiocephalic_trunk_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_common_carotida_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_subclavian_L_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_celiac_trunk_C_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_celiac_trunk_C_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_left_gastric_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_common_hepatic_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_splenic_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_superior_mesenteric_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_renal_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_renal_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_inferior_mesenteric_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_common_iliac_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_common_iliac_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_subclavian_R_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_common_carotida_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_subclavian_L_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_vertebral_L_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_external_iliac_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_internal_iliac_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_external_iliac_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_internal_iliac_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_subclavian_R_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_vertebral_R_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_femoral_L_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_femoral_R_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_axillary_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_axillary_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_brachial_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_brachial_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_radial_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_ulnar_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_radial_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_ulnar_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_profunda_femoris_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_femoral_L_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_femoral_R_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_profunda_femoris_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_popliteal_L_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_popliteal_R_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_popliteal_L_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_tibial_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_popliteal_R_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_tibial_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_tibiofibular_trunk_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_tibiofibular_trunk_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_tibial_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_fibular_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_fibular_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_tibial_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_external_carotid_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_external_carotid_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_vertebral_R_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_inferior_cerebellar_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_inferior_cerebellar_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_vertebral_L_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_basilar_C_5_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_internal_carotid_L_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_basilar_C_4_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_inferior_cerebellar_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_internal_carotid_R_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_communicating_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_internal_carotid_L_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_inferior_cerebellar_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_internal_carotid_R_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_communicating_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_cerebral_L_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_cerebral_R_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_basilar_C_3_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_superior_cerebellar_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_basilar_C_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_middle_cerebral_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_basilar_C_1_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_superior_cerebellar_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_middle_cerebral_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_cerebral_postcommunicating_part_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_cerebral_precommunicating_part_L_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_cerebral_precommunicating_part_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_posterior_cerebral_postcommunicating_part_R_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_cerebral_L_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_communicating_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and A_anterior_cerebral_R_2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and vagal_efferent_module for
    vars W_cv and W_cv;
    vars f_ev_0 and f_ev_0;
    vars f_ev_inf and f_ev_inf;
    vars f_ab_0 and f_ab_0;
    vars theta_v and theta_v;
    vars k_ev and k_ev;
  enddef;
  def map between parameters_global and sympathetic_efferent_module for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
  enddef;
  def map between parameters_global and trunk_resistance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and arm_leg_resistance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and lv_elastance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and rv_elastance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and heart_period_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and venous_us_volume_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and A_thoracic_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and A_aortic_arch_C_1_module for
    vars time and t;
  enddef;
  def map between environment and A_aortic_arch_C_2_module for
    vars time and t;
  enddef;
  def map between environment and A_aortic_arch_C_3_module for
    vars time and t;
  enddef;
  def map between environment and A_aortic_arch_C_4_module for
    vars time and t;
  enddef;
  def map between environment and A_abdominal_aorta_C_1_module for
    vars time and t;
  enddef;
  def map between environment and A_abdominal_aorta_C_2_module for
    vars time and t;
  enddef;
  def map between environment and A_abdominal_aorta_C_3_module for
    vars time and t;
  enddef;
  def map between environment and A_abdominal_aorta_C_4_module for
    vars time and t;
  enddef;
  def map between environment and A_abdominal_aorta_C_5_module for
    vars time and t;
  enddef;
  def map between environment and A_abdominal_aorta_C_6_module for
    vars time and t;
  enddef;
  def map between environment and A_brachiocephalic_trunk_C_module for
    vars time and t;
  enddef;
  def map between environment and A_common_carotida_L_module for
    vars time and t;
  enddef;
  def map between environment and A_subclavian_L_1_module for
    vars time and t;
  enddef;
  def map between environment and A_celiac_trunk_C_1_module for
    vars time and t;
  enddef;
  def map between environment and A_celiac_trunk_C_2_module for
    vars time and t;
  enddef;
  def map between environment and A_left_gastric_C_module for
    vars time and t;
  enddef;
  def map between environment and A_common_hepatic_C_module for
    vars time and t;
  enddef;
  def map between environment and A_splenic_C_module for
    vars time and t;
  enddef;
  def map between environment and A_superior_mesenteric_C_module for
    vars time and t;
  enddef;
  def map between environment and A_renal_L_module for
    vars time and t;
  enddef;
  def map between environment and A_renal_R_module for
    vars time and t;
  enddef;
  def map between environment and A_inferior_mesenteric_C_module for
    vars time and t;
  enddef;
  def map between environment and A_common_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and A_common_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and A_subclavian_R_1_module for
    vars time and t;
  enddef;
  def map between environment and A_common_carotida_R_module for
    vars time and t;
  enddef;
  def map between environment and A_subclavian_L_2_module for
    vars time and t;
  enddef;
  def map between environment and A_vertebral_L_1_module for
    vars time and t;
  enddef;
  def map between environment and A_external_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and A_external_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and A_subclavian_R_2_module for
    vars time and t;
  enddef;
  def map between environment and A_vertebral_R_1_module for
    vars time and t;
  enddef;
  def map between environment and A_femoral_L_1_module for
    vars time and t;
  enddef;
  def map between environment and A_femoral_R_1_module for
    vars time and t;
  enddef;
  def map between environment and A_axillary_L_module for
    vars time and t;
  enddef;
  def map between environment and A_axillary_R_module for
    vars time and t;
  enddef;
  def map between environment and A_brachial_L_module for
    vars time and t;
  enddef;
  def map between environment and A_brachial_R_module for
    vars time and t;
  enddef;
  def map between environment and A_radial_L_module for
    vars time and t;
  enddef;
  def map between environment and A_ulnar_L_module for
    vars time and t;
  enddef;
  def map between environment and A_radial_R_module for
    vars time and t;
  enddef;
  def map between environment and A_ulnar_R_module for
    vars time and t;
  enddef;
  def map between environment and A_profunda_femoris_L_module for
    vars time and t;
  enddef;
  def map between environment and A_femoral_L_2_module for
    vars time and t;
  enddef;
  def map between environment and A_femoral_R_2_module for
    vars time and t;
  enddef;
  def map between environment and A_profunda_femoris_R_module for
    vars time and t;
  enddef;
  def map between environment and A_popliteal_L_1_module for
    vars time and t;
  enddef;
  def map between environment and A_popliteal_R_1_module for
    vars time and t;
  enddef;
  def map between environment and A_popliteal_L_2_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and A_popliteal_R_2_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and A_tibiofibular_trunk_L_module for
    vars time and t;
  enddef;
  def map between environment and A_tibiofibular_trunk_R_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and A_fibular_L_module for
    vars time and t;
  enddef;
  def map between environment and A_fibular_R_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and A_external_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and A_external_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and A_vertebral_R_2_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_inferior_cerebellar_R_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_inferior_cerebellar_L_module for
    vars time and t;
  enddef;
  def map between environment and A_vertebral_L_2_module for
    vars time and t;
  enddef;
  def map between environment and A_basilar_C_5_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_carotid_L_2_module for
    vars time and t;
  enddef;
  def map between environment and A_basilar_C_4_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_inferior_cerebellar_R_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_carotid_R_2_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_communicating_L_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_carotid_L_1_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_inferior_cerebellar_L_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_carotid_R_1_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_communicating_R_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_cerebral_L_1_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_cerebral_R_1_module for
    vars time and t;
  enddef;
  def map between environment and A_basilar_C_3_module for
    vars time and t;
  enddef;
  def map between environment and A_superior_cerebellar_L_module for
    vars time and t;
  enddef;
  def map between environment and A_basilar_C_2_module for
    vars time and t;
  enddef;
  def map between environment and A_middle_cerebral_L_module for
    vars time and t;
  enddef;
  def map between environment and A_basilar_C_1_module for
    vars time and t;
  enddef;
  def map between environment and A_superior_cerebellar_R_module for
    vars time and t;
  enddef;
  def map between environment and A_middle_cerebral_R_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_cerebral_postcommunicating_part_L_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_cerebral_precommunicating_part_L_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_cerebral_precommunicating_part_R_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_cerebral_postcommunicating_part_R_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_cerebral_L_2_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_communicating_C_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_cerebral_R_2_module for
    vars time and t;
  enddef;
  def map between environment and A_left_gastric_C_T_module for
    vars time and t;
  enddef;
  def map between environment and A_common_hepatic_C_T_module for
    vars time and t;
  enddef;
  def map between environment and A_splenic_C_T_module for
    vars time and t;
  enddef;
  def map between environment and A_superior_mesenteric_C_T_module for
    vars time and t;
  enddef;
  def map between environment and A_renal_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_renal_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_inferior_mesenteric_C_T_module for
    vars time and t;
  enddef;
  def map between environment and A_radial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_ulnar_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_radial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_ulnar_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_iliac_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_internal_iliac_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_profunda_femoris_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_profunda_femoris_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_tibial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_tibial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_tibial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_fibular_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_fibular_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_tibial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_inferior_cerebellar_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_inferior_cerebellar_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_inferior_cerebellar_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_inferior_cerebellar_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_superior_cerebellar_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_middle_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_superior_cerebellar_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_middle_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_cerebral_postcommunicating_part_L_T_module for
    vars time and t;
  enddef;
  def map between environment and A_posterior_cerebral_postcommunicating_part_R_T_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_cerebral_L_2_T_module for
    vars time and t;
  enddef;
  def map between environment and A_anterior_cerebral_R_2_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and common_carotida_L_baro_module for
    vars time and t;
  enddef;
  def map between environment and vagal_efferent_module for
    vars time and t;
  enddef;
  def map between environment and sympathetic_efferent_module for
    vars time and t;
  enddef;
  def map between environment and trunk_resistance_effector_module for
    vars time and t;
  enddef;
  def map between environment and arm_leg_resistance_effector_module for
    vars time and t;
  enddef;
  def map between environment and lv_elastance_effector_module for
    vars time and t;
  enddef;
  def map between environment and rv_elastance_effector_module for
    vars time and t;
  enddef;
  def map between environment and heart_period_effector_module for
    vars time and t;
  enddef;
  def map between environment and venous_us_volume_effector_module for
    vars time and t;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
  def map between heart_module and heart for
    vars mt and mt;
    vars e_a and e_a;
    vars e_v and e_v;
    vars T and T;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars T_wCont and T_wCont;
    vars T_ac_wCont and T_ac_wCont;
    vars T_ar_wCont and T_ar_wCont;
    vars T_vc_wCont and T_vc_wCont;
    vars T_vr_wCont and T_vr_wCont;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars l_eff and l_eff;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars rho and rho;
    vars q_lv and q_lv;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_ra and q_ra;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars T_min and T_min;
    vars E_rv_A_wCont and E_rv_A_wCont;
    vars E_lv_A_wCont and E_lv_A_wCont;
    vars q_heart and q_heart;
  enddef;
  def map between heart_module and venous_ivc_module for
    vars u_ra and u_out;
    vars v_svc and v;
  enddef;
  def map between heart_module and venous_svc_module for
    vars u_ra and u_out;
    vars v_ivc and v;
  enddef;
  def map between heart_module and pvn_module for
    vars u_la and u_out;
    vars v_pvn and v;
  enddef;
  def map between heart_module and A_aortic_arch_C_1_module for
    vars u_root and u;
    vars v_aov and v_in;
  enddef;
  def map between heart_module and par_module for
    vars u_par and u;
    vars v_puv and v_in;
  enddef;
  def map between heart_module and heart_period_effector_module for
    vars Delta_T and Delta_T;
  enddef;
  def map between heart_module and rv_elastance_effector_module for
    vars Delta_E_rv and Delta_theta;
  enddef;
  def map between heart_module and lv_elastance_effector_module for
    vars Delta_E_lv and Delta_theta;
  enddef;
  def map between A_thoracic_aorta_C_module and A_thoracic_aorta_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_thoracic_aorta_C_module and A_aortic_arch_C_4_module for
    vars u_in and u;
    vars v and v_out;
  enddef;
  def map between A_thoracic_aorta_C_module and A_abdominal_aorta_C_1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_aortic_arch_C_1_module and A_aortic_arch_C_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars u_C and u_C;
    vars q_C and q_C;
    vars u_C_d and u_C_d;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_aortic_arch_C_1_module and A_aortic_arch_C_2_module for
    vars u_d and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_aortic_arch_C_1_module and A_brachiocephalic_trunk_C_module for
    vars u_d and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_aortic_arch_C_2_module and A_aortic_arch_C_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_aortic_arch_C_2_module and A_aortic_arch_C_3_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_aortic_arch_C_2_module and A_common_carotida_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_aortic_arch_C_3_module and A_aortic_arch_C_3 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_aortic_arch_C_3_module and A_aortic_arch_C_4_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_aortic_arch_C_3_module and A_subclavian_L_1_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_aortic_arch_C_4_module and A_aortic_arch_C_4 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_1_module and A_abdominal_aorta_C_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_1_module and A_abdominal_aorta_C_2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_abdominal_aorta_C_1_module and A_celiac_trunk_C_1_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_abdominal_aorta_C_2_module and A_abdominal_aorta_C_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_2_module and A_abdominal_aorta_C_3_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_abdominal_aorta_C_2_module and A_superior_mesenteric_C_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_abdominal_aorta_C_3_module and A_abdominal_aorta_C_3 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_3_module and A_abdominal_aorta_C_4_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_abdominal_aorta_C_3_module and A_renal_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_abdominal_aorta_C_4_module and A_abdominal_aorta_C_4 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_4_module and A_abdominal_aorta_C_5_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_abdominal_aorta_C_4_module and A_renal_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_abdominal_aorta_C_5_module and A_abdominal_aorta_C_5 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_5_module and A_abdominal_aorta_C_6_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_abdominal_aorta_C_5_module and A_inferior_mesenteric_C_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_abdominal_aorta_C_6_module and A_abdominal_aorta_C_6 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_abdominal_aorta_C_6_module and A_common_iliac_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_abdominal_aorta_C_6_module and A_common_iliac_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_brachiocephalic_trunk_C_module and A_brachiocephalic_trunk_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_brachiocephalic_trunk_C_module and A_subclavian_R_1_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_brachiocephalic_trunk_C_module and A_common_carotida_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_common_carotida_L_module and A_common_carotida_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_common_carotida_L_module and A_external_carotid_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_common_carotida_L_module and A_internal_carotid_L_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_common_carotida_L_module and common_carotida_L_baro_module for
    vars u and P_sys;
    vars du_C_dt and dP_sys_dt;
  enddef;
  def map between A_subclavian_L_1_module and A_subclavian_L_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_subclavian_L_1_module and A_subclavian_L_2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_subclavian_L_1_module and A_vertebral_L_1_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_celiac_trunk_C_1_module and A_celiac_trunk_C_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_celiac_trunk_C_1_module and A_celiac_trunk_C_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_celiac_trunk_C_1_module and A_left_gastric_C_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_celiac_trunk_C_2_module and A_celiac_trunk_C_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_celiac_trunk_C_2_module and A_common_hepatic_C_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_celiac_trunk_C_2_module and A_splenic_C_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_left_gastric_C_module and A_left_gastric_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_left_gastric_C_module and A_left_gastric_C_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_common_hepatic_C_module and A_common_hepatic_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_common_hepatic_C_module and A_common_hepatic_C_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_splenic_C_module and A_splenic_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_splenic_C_module and A_splenic_C_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_superior_mesenteric_C_module and A_superior_mesenteric_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_superior_mesenteric_C_module and A_superior_mesenteric_C_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_renal_L_module and A_renal_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_renal_L_module and A_renal_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_renal_R_module and A_renal_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_renal_R_module and A_renal_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_inferior_mesenteric_C_module and A_inferior_mesenteric_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_inferior_mesenteric_C_module and A_inferior_mesenteric_C_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_common_iliac_L_module and A_common_iliac_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_common_iliac_L_module and A_external_iliac_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_common_iliac_L_module and A_internal_iliac_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_common_iliac_R_module and A_common_iliac_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_common_iliac_R_module and A_external_iliac_R_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_common_iliac_R_module and A_internal_iliac_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_subclavian_R_1_module and A_subclavian_R_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_subclavian_R_1_module and A_subclavian_R_2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_subclavian_R_1_module and A_vertebral_R_1_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_common_carotida_R_module and A_common_carotida_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_common_carotida_R_module and A_external_carotid_R_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_common_carotida_R_module and A_internal_carotid_R_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_subclavian_L_2_module and A_subclavian_L_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_subclavian_L_2_module and A_axillary_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_vertebral_L_1_module and A_vertebral_L_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_vertebral_L_1_module and A_posterior_inferior_cerebellar_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_vertebral_L_1_module and A_vertebral_L_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_external_iliac_L_module and A_external_iliac_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_external_iliac_L_module and A_femoral_L_1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_internal_iliac_L_module and A_internal_iliac_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_internal_iliac_L_module and A_internal_iliac_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_external_iliac_R_module and A_external_iliac_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_external_iliac_R_module and A_femoral_R_1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_internal_iliac_R_module and A_internal_iliac_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_internal_iliac_R_module and A_internal_iliac_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_subclavian_R_2_module and A_subclavian_R_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_subclavian_R_2_module and A_axillary_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_vertebral_R_1_module and A_vertebral_R_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_vertebral_R_1_module and A_vertebral_R_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_vertebral_R_1_module and A_posterior_inferior_cerebellar_R_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_femoral_L_1_module and A_femoral_L_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_femoral_L_1_module and A_profunda_femoris_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_femoral_L_1_module and A_femoral_L_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_femoral_R_1_module and A_femoral_R_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_femoral_R_1_module and A_femoral_R_2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_femoral_R_1_module and A_profunda_femoris_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_axillary_L_module and A_axillary_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_axillary_L_module and A_brachial_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_axillary_R_module and A_axillary_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_axillary_R_module and A_brachial_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_brachial_L_module and A_brachial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_brachial_L_module and A_radial_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_brachial_L_module and A_ulnar_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_brachial_R_module and A_brachial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_brachial_R_module and A_radial_R_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_brachial_R_module and A_ulnar_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_radial_L_module and A_radial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_radial_L_module and A_radial_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_ulnar_L_module and A_ulnar_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_ulnar_L_module and A_ulnar_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_radial_R_module and A_radial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_radial_R_module and A_radial_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_ulnar_R_module and A_ulnar_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_ulnar_R_module and A_ulnar_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_profunda_femoris_L_module and A_profunda_femoris_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_profunda_femoris_L_module and A_profunda_femoris_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_femoral_L_2_module and A_femoral_L_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_femoral_L_2_module and A_popliteal_L_1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_femoral_R_2_module and A_femoral_R_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_femoral_R_2_module and A_popliteal_R_1_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_profunda_femoris_R_module and A_profunda_femoris_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_profunda_femoris_R_module and A_profunda_femoris_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_popliteal_L_1_module and A_popliteal_L_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_popliteal_L_1_module and A_popliteal_L_2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_popliteal_L_1_module and A_anterior_tibial_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_popliteal_R_1_module and A_popliteal_R_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_popliteal_R_1_module and A_popliteal_R_2_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_popliteal_R_1_module and A_anterior_tibial_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_popliteal_L_2_module and A_popliteal_L_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_popliteal_L_2_module and A_tibiofibular_trunk_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_anterior_tibial_L_module and A_anterior_tibial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_tibial_L_module and A_anterior_tibial_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_popliteal_R_2_module and A_popliteal_R_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_popliteal_R_2_module and A_tibiofibular_trunk_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_anterior_tibial_R_module and A_anterior_tibial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_tibial_R_module and A_anterior_tibial_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_tibiofibular_trunk_L_module and A_tibiofibular_trunk_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_tibiofibular_trunk_L_module and A_posterior_tibial_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_tibiofibular_trunk_L_module and A_fibular_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_tibiofibular_trunk_R_module and A_tibiofibular_trunk_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_tibiofibular_trunk_R_module and A_fibular_R_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_tibiofibular_trunk_R_module and A_posterior_tibial_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_posterior_tibial_L_module and A_posterior_tibial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_tibial_L_module and A_posterior_tibial_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_fibular_L_module and A_fibular_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_fibular_L_module and A_fibular_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_fibular_R_module and A_fibular_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_fibular_R_module and A_fibular_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_posterior_tibial_R_module and A_posterior_tibial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_tibial_R_module and A_posterior_tibial_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_external_carotid_L_module and A_external_carotid_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_external_carotid_L_module and A_external_carotid_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_external_carotid_R_module and A_external_carotid_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_external_carotid_R_module and A_external_carotid_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_vertebral_R_2_module and A_vertebral_R_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_vertebral_R_2_module and A_basilar_C_5_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between A_posterior_inferior_cerebellar_R_module and A_posterior_inferior_cerebellar_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_inferior_cerebellar_R_module and A_posterior_inferior_cerebellar_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_posterior_inferior_cerebellar_L_module and A_posterior_inferior_cerebellar_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_inferior_cerebellar_L_module and A_posterior_inferior_cerebellar_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_vertebral_L_2_module and A_vertebral_L_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_vertebral_L_2_module and A_basilar_C_5_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between A_basilar_C_5_module and A_basilar_C_5 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars u_d and u_d;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_basilar_C_5_module and A_basilar_C_4_module for
    vars u_d and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_basilar_C_5_module and A_anterior_inferior_cerebellar_R_module for
    vars u_d and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_internal_carotid_L_2_module and A_internal_carotid_L_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_internal_carotid_L_2_module and A_posterior_communicating_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_internal_carotid_L_2_module and A_internal_carotid_L_1_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_basilar_C_4_module and A_basilar_C_4 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_basilar_C_4_module and A_anterior_inferior_cerebellar_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_basilar_C_4_module and A_basilar_C_3_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_anterior_inferior_cerebellar_R_module and A_anterior_inferior_cerebellar_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_inferior_cerebellar_R_module and A_anterior_inferior_cerebellar_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_internal_carotid_R_2_module and A_internal_carotid_R_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_internal_carotid_R_2_module and A_internal_carotid_R_1_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_internal_carotid_R_2_module and A_posterior_communicating_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_posterior_communicating_L_module and A_posterior_communicating_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_communicating_L_module and A_posterior_cerebral_postcommunicating_part_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_posterior_communicating_L_module and A_posterior_cerebral_precommunicating_part_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_internal_carotid_L_1_module and A_internal_carotid_L_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_internal_carotid_L_1_module and A_anterior_cerebral_L_1_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_internal_carotid_L_1_module and A_middle_cerebral_L_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_anterior_inferior_cerebellar_L_module and A_anterior_inferior_cerebellar_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_inferior_cerebellar_L_module and A_anterior_inferior_cerebellar_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_internal_carotid_R_1_module and A_internal_carotid_R_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_internal_carotid_R_1_module and A_anterior_cerebral_R_1_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_internal_carotid_R_1_module and A_middle_cerebral_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_posterior_communicating_R_module and A_posterior_communicating_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_communicating_R_module and A_posterior_cerebral_precommunicating_part_R_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_posterior_communicating_R_module and A_posterior_cerebral_postcommunicating_part_R_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_anterior_cerebral_L_1_module and A_anterior_cerebral_L_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_L_1_module and A_anterior_cerebral_L_2_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between A_anterior_cerebral_R_1_module and A_anterior_cerebral_R_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_R_1_module and A_anterior_communicating_C_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_anterior_cerebral_R_1_module and A_anterior_cerebral_R_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_basilar_C_3_module and A_basilar_C_3 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars du_C_dt and du_C_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_basilar_C_3_module and A_superior_cerebellar_L_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between A_basilar_C_3_module and A_basilar_C_2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between A_superior_cerebellar_L_module and A_superior_cerebellar_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_superior_cerebellar_L_module and A_superior_cerebellar_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_basilar_C_2_module and A_basilar_C_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_basilar_C_2_module and A_superior_cerebellar_R_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between A_middle_cerebral_L_module and A_middle_cerebral_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_middle_cerebral_L_module and A_middle_cerebral_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_basilar_C_1_module and A_basilar_C_1 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_basilar_C_1_module and A_posterior_cerebral_precommunicating_part_L_module for
    vars v_in_1 and v_d;
    vars u and u_out;
  enddef;
  def map between A_basilar_C_1_module and A_posterior_cerebral_precommunicating_part_R_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between A_basilar_C_1_module and A_superior_cerebellar_R_module for
    vars v and v_in_2;
    vars u_out and u;
  enddef;
  def map between A_superior_cerebellar_R_module and A_superior_cerebellar_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars u_d and u_d;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_superior_cerebellar_R_module and A_superior_cerebellar_R_T_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between A_middle_cerebral_R_module and A_middle_cerebral_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_middle_cerebral_R_module and A_middle_cerebral_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_L_module and A_posterior_cerebral_postcommunicating_part_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_L_module and A_posterior_cerebral_postcommunicating_part_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_posterior_cerebral_precommunicating_part_L_module and A_posterior_cerebral_precommunicating_part_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_cerebral_precommunicating_part_R_module and A_posterior_cerebral_precommunicating_part_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_R_module and A_posterior_cerebral_postcommunicating_part_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_R_module and A_posterior_cerebral_postcommunicating_part_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_anterior_cerebral_L_2_module and A_anterior_cerebral_L_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars u_d and u_d;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_L_2_module and A_anterior_communicating_C_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between A_anterior_cerebral_L_2_module and A_anterior_cerebral_L_2_T_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between A_anterior_communicating_C_module and A_anterior_communicating_C for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_d and v_d;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_R_2_module and A_anterior_cerebral_R_2 for
    vars beta_g and beta_g;
    vars theta and theta;
    vars E and E;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_R_2_module and A_anterior_cerebral_R_2_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between A_left_gastric_C_T_module and A_left_gastric_C_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_left_gastric_C_T_module and terminal_venous_connection for
    vars v_T and v_A_left_gastric_C_T;
  enddef;
  def map between A_left_gastric_C_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_left_gastric_C_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_common_hepatic_C_T_module and A_common_hepatic_C_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_common_hepatic_C_T_module and terminal_venous_connection for
    vars v_T and v_A_common_hepatic_C_T;
  enddef;
  def map between A_common_hepatic_C_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_common_hepatic_C_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_splenic_C_T_module and A_splenic_C_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_splenic_C_T_module and terminal_venous_connection for
    vars v_T and v_A_splenic_C_T;
  enddef;
  def map between A_splenic_C_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_splenic_C_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_superior_mesenteric_C_T_module and A_superior_mesenteric_C_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_superior_mesenteric_C_T_module and terminal_venous_connection for
    vars v_T and v_A_superior_mesenteric_C_T;
  enddef;
  def map between A_superior_mesenteric_C_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_superior_mesenteric_C_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_renal_L_T_module and A_renal_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_renal_L_T_module and terminal_venous_connection for
    vars v_T and v_A_renal_L_T;
  enddef;
  def map between A_renal_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_renal_L_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_renal_R_T_module and A_renal_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_renal_R_T_module and terminal_venous_connection for
    vars v_T and v_A_renal_R_T;
  enddef;
  def map between A_renal_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_renal_R_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_inferior_mesenteric_C_T_module and A_inferior_mesenteric_C_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_inferior_mesenteric_C_T_module and terminal_venous_connection for
    vars v_T and v_A_inferior_mesenteric_C_T;
  enddef;
  def map between A_inferior_mesenteric_C_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_inferior_mesenteric_C_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_radial_L_T_module and A_radial_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_radial_L_T_module and terminal_venous_connection for
    vars v_T and v_A_radial_L_T;
  enddef;
  def map between A_radial_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_radial_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_ulnar_L_T_module and A_ulnar_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_ulnar_L_T_module and terminal_venous_connection for
    vars v_T and v_A_ulnar_L_T;
  enddef;
  def map between A_ulnar_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_ulnar_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_radial_R_T_module and A_radial_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_radial_R_T_module and terminal_venous_connection for
    vars v_T and v_A_radial_R_T;
  enddef;
  def map between A_radial_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_radial_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_ulnar_R_T_module and A_ulnar_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_ulnar_R_T_module and terminal_venous_connection for
    vars v_T and v_A_ulnar_R_T;
  enddef;
  def map between A_ulnar_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_ulnar_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_internal_iliac_L_T_module and A_internal_iliac_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_internal_iliac_L_T_module and terminal_venous_connection for
    vars v_T and v_A_internal_iliac_L_T;
  enddef;
  def map between A_internal_iliac_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_internal_iliac_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_internal_iliac_R_T_module and A_internal_iliac_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_internal_iliac_R_T_module and terminal_venous_connection for
    vars v_T and v_A_internal_iliac_R_T;
  enddef;
  def map between A_internal_iliac_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_internal_iliac_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_profunda_femoris_L_T_module and A_profunda_femoris_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_profunda_femoris_L_T_module and terminal_venous_connection for
    vars v_T and v_A_profunda_femoris_L_T;
  enddef;
  def map between A_profunda_femoris_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_profunda_femoris_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_profunda_femoris_R_T_module and A_profunda_femoris_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_profunda_femoris_R_T_module and terminal_venous_connection for
    vars v_T and v_A_profunda_femoris_R_T;
  enddef;
  def map between A_profunda_femoris_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_profunda_femoris_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_anterior_tibial_L_T_module and A_anterior_tibial_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_anterior_tibial_L_T_module and terminal_venous_connection for
    vars v_T and v_A_anterior_tibial_L_T;
  enddef;
  def map between A_anterior_tibial_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_anterior_tibial_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_anterior_tibial_R_T_module and A_anterior_tibial_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_anterior_tibial_R_T_module and terminal_venous_connection for
    vars v_T and v_A_anterior_tibial_R_T;
  enddef;
  def map between A_anterior_tibial_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_anterior_tibial_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_posterior_tibial_L_T_module and A_posterior_tibial_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_posterior_tibial_L_T_module and terminal_venous_connection for
    vars v_T and v_A_posterior_tibial_L_T;
  enddef;
  def map between A_posterior_tibial_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_posterior_tibial_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_fibular_L_T_module and A_fibular_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_fibular_L_T_module and terminal_venous_connection for
    vars v_T and v_A_fibular_L_T;
  enddef;
  def map between A_fibular_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_fibular_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_fibular_R_T_module and A_fibular_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_fibular_R_T_module and terminal_venous_connection for
    vars v_T and v_A_fibular_R_T;
  enddef;
  def map between A_fibular_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_fibular_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_posterior_tibial_R_T_module and A_posterior_tibial_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between A_posterior_tibial_R_T_module and terminal_venous_connection for
    vars v_T and v_A_posterior_tibial_R_T;
  enddef;
  def map between A_posterior_tibial_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between A_posterior_tibial_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between A_external_carotid_L_T_module and A_external_carotid_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_A_external_carotid_L_T;
  enddef;
  def map between A_external_carotid_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_external_carotid_R_T_module and A_external_carotid_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_A_external_carotid_R_T;
  enddef;
  def map between A_external_carotid_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_posterior_inferior_cerebellar_R_T_module and A_posterior_inferior_cerebellar_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_posterior_inferior_cerebellar_R_T_module and terminal_venous_connection for
    vars v_T and v_A_posterior_inferior_cerebellar_R_T;
  enddef;
  def map between A_posterior_inferior_cerebellar_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_posterior_inferior_cerebellar_L_T_module and A_posterior_inferior_cerebellar_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_posterior_inferior_cerebellar_L_T_module and terminal_venous_connection for
    vars v_T and v_A_posterior_inferior_cerebellar_L_T;
  enddef;
  def map between A_posterior_inferior_cerebellar_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_anterior_inferior_cerebellar_R_T_module and A_anterior_inferior_cerebellar_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_anterior_inferior_cerebellar_R_T_module and terminal_venous_connection for
    vars v_T and v_A_anterior_inferior_cerebellar_R_T;
  enddef;
  def map between A_anterior_inferior_cerebellar_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_anterior_inferior_cerebellar_L_T_module and A_anterior_inferior_cerebellar_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_anterior_inferior_cerebellar_L_T_module and terminal_venous_connection for
    vars v_T and v_A_anterior_inferior_cerebellar_L_T;
  enddef;
  def map between A_anterior_inferior_cerebellar_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_superior_cerebellar_L_T_module and A_superior_cerebellar_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_superior_cerebellar_L_T_module and terminal_venous_connection for
    vars v_T and v_A_superior_cerebellar_L_T;
  enddef;
  def map between A_superior_cerebellar_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_middle_cerebral_L_T_module and A_middle_cerebral_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_middle_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_A_middle_cerebral_L_T;
  enddef;
  def map between A_middle_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_superior_cerebellar_R_T_module and A_superior_cerebellar_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_superior_cerebellar_R_T_module and terminal_venous_connection for
    vars v_T and v_A_superior_cerebellar_R_T;
  enddef;
  def map between A_superior_cerebellar_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_middle_cerebral_R_T_module and A_middle_cerebral_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_middle_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_A_middle_cerebral_R_T;
  enddef;
  def map between A_middle_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_L_T_module and A_posterior_cerebral_postcommunicating_part_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_L_T_module and terminal_venous_connection for
    vars v_T and v_A_posterior_cerebral_postcommunicating_part_L_T;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_R_T_module and A_posterior_cerebral_postcommunicating_part_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_R_T_module and terminal_venous_connection for
    vars v_T and v_A_posterior_cerebral_postcommunicating_part_R_T;
  enddef;
  def map between A_posterior_cerebral_postcommunicating_part_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_anterior_cerebral_L_2_T_module and A_anterior_cerebral_L_2_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_L_2_T_module and terminal_venous_connection for
    vars v_T and v_A_anterior_cerebral_L_2_T;
  enddef;
  def map between A_anterior_cerebral_L_2_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between A_anterior_cerebral_R_2_T_module and A_anterior_cerebral_R_2_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between A_anterior_cerebral_R_2_T_module and terminal_venous_connection for
    vars v_T and v_A_anterior_cerebral_R_2_T;
  enddef;
  def map between A_anterior_cerebral_R_2_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between venous_lb_module and venous_lb for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars C_wCont and C_wCont;
  enddef;
  def map between venous_lb_module and terminal_venous_connection for
    vars v_in and v_venous_lb;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_lb_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta_us;
    vars Delta_C and Delta_theta_compliance;
  enddef;
  def map between venous_ub_module and venous_ub for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars C_wCont and C_wCont;
  enddef;
  def map between venous_ub_module and terminal_venous_connection for
    vars v_in and v_venous_ub;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta_us;
    vars Delta_C and Delta_theta_compliance;
  enddef;
  def map between venous_ivc_module and venous_ivc for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars C_wCont and C_wCont;
  enddef;
  def map between venous_ivc_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta_us;
    vars Delta_C and Delta_theta_compliance;
  enddef;
  def map between venous_svc_module and venous_svc for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars C_wCont and C_wCont;
  enddef;
  def map between venous_svc_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta_us;
    vars Delta_C and Delta_theta_compliance;
  enddef;
  def map between common_carotida_L_baro_module and common_carotida_L_baro for
    vars P_baro_init and P_baro_init;
    vars P_baro and P_baro;
    vars f_ab and f_ab;
    vars P_nom and P_nom;
    vars f_ab_min and f_ab_min;
    vars f_ab_max and f_ab_max;
    vars k_ab and k_ab;
    vars tau_zb and tau_zb;
    vars tau_pb and tau_pb;
  enddef;
  def map between common_carotida_L_baro_module and vagal_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between common_carotida_L_baro_module and sympathetic_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between vagal_efferent_module and vagal_efferent for
    vars f_ev_0 and f_ev_0;
    vars f_ev_inf and f_ev_inf;
    vars f_ab_0 and f_ab_0;
    vars theta_v and theta_v;
    vars W_cv and W_cv;
    vars k_ev and k_ev;
    vars f_apc and f_apc;
    vars f_v and f_v;
  enddef;
  def map between vagal_efferent_module and heart_period_effector_module for
    vars f_v and f_v;
  enddef;
  def map between sympathetic_efferent_module and sympathetic_efferent for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
    vars W_bs and W_bs;
    vars W_cs and W_cs;
    vars f_apc and f_apc;
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and trunk_resistance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and arm_leg_resistance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and lv_elastance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and rv_elastance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and heart_period_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and venous_us_volume_effector_module for
    vars f_s and f_s;
  enddef;
  def map between trunk_resistance_effector_module and trunk_resistance_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between arm_leg_resistance_effector_module and arm_leg_resistance_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between lv_elastance_effector_module and lv_elastance_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between rv_elastance_effector_module and rv_elastance_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between heart_period_effector_module and heart_period_effector for
    vars G_Ts and G_Ts;
    vars G_Tv and G_Tv;
    vars f_es_min and f_es_min;
    vars tau_Ts and tau_Ts;
    vars tau_Tv and tau_Tv;
    vars Delta_Ts and Delta_Ts;
    vars Delta_Tv and Delta_Tv;
    vars Delta_T and Delta_T;
    vars sigma_Ts and sigma_Ts;
    vars sigma_Tv and sigma_Tv;
  enddef;
  def map between venous_us_volume_effector_module and venous_us_volume_effector for
    vars G_theta_us and G_theta_us;
    vars G_theta_compliance and G_theta_compliance;
    vars f_es_min and f_es_min;
    vars tau_theta_us and tau_theta_us;
    vars tau_theta_compliance and tau_theta_compliance;
    vars Delta_theta_us and Delta_theta_us;
    vars sigma_theta_us and sigma_theta_us;
    vars Delta_theta_compliance and Delta_theta_compliance;
    vars sigma_theta_compliance and sigma_theta_compliance;
  enddef;
  def map between par_module and par for
    vars I and I;
    vars C and C;
    vars R and R;
    vars q_0 and q_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C and q_C;
    vars v and v;
    vars q and q;
  enddef;
  def map between par_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pvn_module and pvn for
    vars I and I;
    vars C and C;
    vars R and R;
    vars q_0 and q_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C and q_C;
    vars v and v;
    vars q and q;
  enddef;
enddef;
